#pragma once
#include "Finalized Methods\\ASWStandard\\TraceLevel\\TraceLevel.hsl"
#include "HSLStrLib.hsl"
#include "Finalized Methods\\ASWStandard\\ASWGlobal\\ASWGlobal.hsl"
#include "HSLMthLib.hsl"
#include "HSLMETEDLib.hs_"
#include "Finalized Methods\\HSLMECCLib.hs_"

namespace BIOTAGEPLASMIDPURIFICATION_DIALOGSCONTROLLER {
  private function _versionHistory(  ) void ;
  function calculateConsumableRequirements( variable i_int_requestedElutionBufferVol, variable & o_int_requiredWash1Buffer, variable & o_int_requiredWash2Buffer, variable & o_int_requiredElutionBuffer, variable & o_int_requiredResuspensionBuffer, variable & o_int_requiredLysisBuffer, variable & o_int_requiredPrecipitationBuffer, variable & o_int_requiredEquilibrationBuffer ) void ;
  function displayLoadingInstructions( variable i_int_elutionBufferPerSample ) variable ;
  function displayMethodCompleteDialog(  ) variable ;
  function displayTipWarningDialog( variable i_int_tipTypeWithNotEnoughRacks, variable i_int_requiredNumberOfTipRacks ) variable ;
  function displayWarningMessage( variable i_str_dialogMainMessage, variable i_str_dialogLongMessage ) variable ;
  function getUserInput( variable & o_int_resinVolume, variable & o_int_elutionVolume, variable & o_bln_PerformSecondElution ) variable ;
  function queryCellPelletResuspensionState(  ) variable ;
  function _InitLibrary() {
  }
  function _ExitLibrary() {
  }

  function displayMethodCompleteDialog(  ) variable {
    private dialog customDialog_1;
    private variable l_str_methodName;
    private variable l_str_functionName;
    l_str_functionName = GetFunctionName();
    l_str_methodName = GetMethodFileName();
    TRACELEVEL::TraceAction(TRACE_LEVEL_RELEASE, TRACELEVEL::ACTION::PROGRESS, l_str_functionName, l_str_methodName, Translate(""));
    customDialog_1.InitCustomDialog("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");
    customDialog_1.ShowCustomDialog();
    TRACELEVEL::TraceAction(TRACE_LEVEL_RELEASE, TRACELEVEL::ACTION::COMPLETE, l_str_functionName, l_str_methodName, Translate(""));
    return (ASWGLOBAL::BOOL::TRUE);
  }

  function displayTipWarningDialog( variable i_int_tipTypeWithNotEnoughRacks, variable i_int_requiredNumberOfTipRacks ) variable {
    private dialog customDialog_2;
    private variable l_str_longMessage;
    private variable l_str_methodName;
    private variable l_str_functionName;
    private variable l_str_shortMessage;
    private variable l_bool_returnValue;
    l_str_functionName = GetFunctionName();
    l_str_methodName = GetMethodFileName();
    TRACELEVEL::TraceAction(TRACE_LEVEL_RELEASE, TRACELEVEL::ACTION::PROGRESS, l_str_functionName, l_str_methodName, Translate(""));
    if (i_int_tipTypeWithNotEnoughRacks == 1)
    {
      l_str_shortMessage = StrConcat2(Translate("Not Enough 300ul Tip Racks Loaded"), Translate(""));
      l_str_longMessage = StrConcat4(Translate("Please load at least "), i_int_requiredNumberOfTipRacks, Translate(" racks of 300ul tips on deck, then click 'Ok' to re-edit the tip counter or 'Cancel' to abort the current run"), Translate(""));
    }
    else
    {
      if (i_int_tipTypeWithNotEnoughRacks == 2)
      {
        l_str_shortMessage = StrConcat2(Translate("Not Enough 1000ul Tip Racks Loaded"), Translate(""));
        l_str_longMessage = StrConcat4(Translate("Please load at least "), i_int_requiredNumberOfTipRacks, Translate(" racks of 1000ul tips on deck, then click 'Ok' to re-edit the tip counter or 'Cancel' to abort the current run"), Translate(""));
      }
      else
      {
        l_str_shortMessage = StrConcat2(Translate("Not Enough PhyTips Loaded"), Translate(""));
        l_str_longMessage = StrConcat4(Translate("Please load at least "), i_int_requiredNumberOfTipRacks, Translate(" PhyTips on deck then click 'Ok' to re-edit the tip counter or 'Cancel' to abort the current run"), Translate(""));
      }
    }
    customDialog_2.InitCustomDialog("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");
    customDialog_2.SetCustomDialogProperty( "textBlock2.Text", l_str_shortMessage );
    customDialog_2.SetCustomDialogProperty( "textBlock3.Text", l_str_longMessage );
    customDialog_2.ShowCustomDialog();
    l_bool_returnValue = customDialog_2.GetCustomDialogProperty( "ReturnValue" );
    if (l_bool_returnValue == ASWGLOBAL::DIALOG::CANCEL)
    {
      TRACELEVEL::TraceAction(TRACE_LEVEL_RELEASE, TRACELEVEL::ACTION::ERROR, l_str_functionName, l_str_methodName, Translate("Fatal Error: User requested to end the assay"));
      return (ASWGLOBAL::BOOL::FALSE);
    }
    TRACELEVEL::TraceAction(TRACE_LEVEL_RELEASE, TRACELEVEL::ACTION::COMPLETE, l_str_functionName, l_str_methodName, Translate(""));
    return (ASWGLOBAL::BOOL::TRUE);
  }

  function getUserInput( variable & o_int_resinVolume, variable & o_int_elutionVolume, variable & o_bln_PerformSecondElution ) variable {
    private variable l_str_methodName;
    private variable l_str_functionName;
    private dialog customDialog_3;
    private variable l_bool_returnValue;
    o_int_resinVolume = 0;
    o_int_elutionVolume = 0;
    o_bln_PerformSecondElution = 0;
    l_str_functionName = GetFunctionName();
    l_str_methodName = GetMethodFileName();
    TRACELEVEL::TraceAction(TRACE_LEVEL_RELEASE, TRACELEVEL::ACTION::PROGRESS, l_str_functionName, l_str_methodName, Translate(""));
    customDialog_3.InitCustomDialog("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");
    customDialog_3.ShowCustomDialog();
    l_bool_returnValue = customDialog_3.GetCustomDialogProperty( "ReturnValue" );
    o_int_elutionVolume = customDialog_3.GetCustomDialogProperty( "numeric1.Value" );
    o_int_resinVolume = customDialog_3.GetCustomDialogProperty( "comboBox1.SelectedIndex" );
    o_bln_PerformSecondElution = customDialog_3.GetCustomDialogProperty( "checkBox1.IsChecked" );
    if (l_bool_returnValue == ASWGLOBAL::DIALOG::CANCEL)
    {
      TRACELEVEL::TraceAction(TRACE_LEVEL_RELEASE, TRACELEVEL::ACTION::ERROR, l_str_functionName, l_str_methodName, Translate("Fatal Error: User requested to end the assay"));
      return (ASWGLOBAL::BOOL::FALSE);
    }
    TRACELEVEL::TraceAction(TRACE_LEVEL_RELEASE, TRACELEVEL::ACTION::COMPLETE, l_str_functionName, l_str_methodName, Translate(""));
    return (ASWGLOBAL::BOOL::TRUE);
  }

  private function _versionHistory(  ) void {
  }

  function calculateConsumableRequirements( variable i_int_requestedElutionBufferVol, variable & o_int_requiredWash1Buffer, variable & o_int_requiredWash2Buffer, variable & o_int_requiredElutionBuffer, variable & o_int_requiredResuspensionBuffer, variable & o_int_requiredLysisBuffer, variable & o_int_requiredPrecipitationBuffer, variable & o_int_requiredEquilibrationBuffer ) void {
    private variable l_str_methodName;
    private variable l_str_functionName;
    o_int_requiredWash1Buffer = 0;
    o_int_requiredWash2Buffer = 0;
    o_int_requiredElutionBuffer = 0;
    o_int_requiredResuspensionBuffer = 0;
    o_int_requiredLysisBuffer = 0;
    o_int_requiredPrecipitationBuffer = 0;
    o_int_requiredEquilibrationBuffer = 0;
    l_str_functionName = GetFunctionName();
    l_str_methodName = GetMethodFileName();
    TRACELEVEL::TraceAction(TRACE_LEVEL_RELEASE, TRACELEVEL::ACTION::PROGRESS, l_str_functionName, l_str_methodName, Translate(""));
    o_int_requiredWash1Buffer = 500 * 98;
    o_int_requiredWash1Buffer = o_int_requiredWash1Buffer / (1000 * 1.0);
    o_int_requiredWash1Buffer = MthCeiling(o_int_requiredWash1Buffer);
    o_int_requiredWash1Buffer = o_int_requiredWash1Buffer + 10;
    o_int_requiredWash2Buffer = o_int_requiredWash1Buffer * 2;
    o_int_requiredWash2Buffer = o_int_requiredWash2Buffer - 10;
    o_int_requiredElutionBuffer = i_int_requestedElutionBufferVol * 98;
    o_int_requiredElutionBuffer = o_int_requiredElutionBuffer / (1000 * 1.0);
    o_int_requiredElutionBuffer = MthCeiling(o_int_requiredElutionBuffer);
    o_int_requiredElutionBuffer = o_int_requiredElutionBuffer + 10;
    o_int_requiredResuspensionBuffer = 150 * 98;
    o_int_requiredResuspensionBuffer = o_int_requiredResuspensionBuffer / (1000 * 1.0);
    o_int_requiredResuspensionBuffer = MthCeiling(o_int_requiredResuspensionBuffer);
    o_int_requiredResuspensionBuffer = o_int_requiredResuspensionBuffer + 10;
    o_int_requiredLysisBuffer = 180 * 98;
    o_int_requiredLysisBuffer = o_int_requiredLysisBuffer / (1000 * 1.0);
    o_int_requiredLysisBuffer = MthCeiling(o_int_requiredLysisBuffer);
    o_int_requiredLysisBuffer = o_int_requiredLysisBuffer + 10;
    o_int_requiredPrecipitationBuffer = 210 * 98;
    o_int_requiredPrecipitationBuffer = o_int_requiredPrecipitationBuffer / (1000 * 1.0);
    o_int_requiredPrecipitationBuffer = MthCeiling(o_int_requiredPrecipitationBuffer);
    o_int_requiredPrecipitationBuffer = o_int_requiredPrecipitationBuffer + 10;
    o_int_requiredEquilibrationBuffer = 500 * 96;
    o_int_requiredEquilibrationBuffer = o_int_requiredEquilibrationBuffer / (1000 * 1.0);
    o_int_requiredEquilibrationBuffer = MthCeiling(o_int_requiredEquilibrationBuffer);
    o_int_requiredEquilibrationBuffer = o_int_requiredEquilibrationBuffer + 10;
    TRACELEVEL::TraceAction(TRACE_LEVEL_RELEASE, TRACELEVEL::ACTION::COMPLETE, l_str_functionName, l_str_methodName, Translate(""));
  }

  function displayLoadingInstructions( variable i_int_elutionBufferPerSample ) variable {
    private dialog customDialog_4;
    private variable l_str_methodName;
    private variable l_str_functionName;
    private variable l_bool_returnValue;
    private variable l_int_lysisBuffer;
    private variable l_int_resuspensionBuffer;
    private variable l_int_elutionBuffer;
    private variable l_int_washBuffer1;
    private variable l_int_washBuffer2;
    private variable l_int_equilibrationBuffer;
    private variable l_int_precipitationBuffer;
    l_str_functionName = GetFunctionName();
    l_str_methodName = GetMethodFileName();
    TRACELEVEL::TraceAction(TRACE_LEVEL_RELEASE, TRACELEVEL::ACTION::PROGRESS, l_str_functionName, l_str_methodName, Translate(""));
    calculateConsumableRequirements(i_int_elutionBufferPerSample, l_int_washBuffer1, l_int_washBuffer2, l_int_elutionBuffer, l_int_resuspensionBuffer, l_int_lysisBuffer, l_int_precipitationBuffer, l_int_equilibrationBuffer);
    customDialog_4.InitCustomDialog("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");
    customDialog_4.SetCustomDialogProperty( "textBlock5.Text", l_int_equilibrationBuffer );
    customDialog_4.SetCustomDialogProperty( "textBlock8.Text", l_int_washBuffer1 );
    customDialog_4.SetCustomDialogProperty( "textBlock9.Text", l_int_lysisBuffer );
    customDialog_4.SetCustomDialogProperty( "textBlock10.Text", l_int_washBuffer2 );
    customDialog_4.SetCustomDialogProperty( "textBlock11.Text", l_int_resuspensionBuffer );
    customDialog_4.SetCustomDialogProperty( "textBlock12.Text", l_int_precipitationBuffer );
    customDialog_4.SetCustomDialogProperty( "textBlock37.Text", l_int_elutionBuffer );
    customDialog_4.ShowCustomDialog();
    l_bool_returnValue = customDialog_4.GetCustomDialogProperty( "ReturnValue" );
    if (l_bool_returnValue == ASWGLOBAL::DIALOG::CANCEL)
    {
      TRACELEVEL::TraceAction(TRACE_LEVEL_RELEASE, TRACELEVEL::ACTION::ERROR, l_str_functionName, l_str_methodName, Translate("Fatal Error: The user requested to cancel the current assay run"));
      return (ASWGLOBAL::BOOL::FALSE);
    }
    TRACELEVEL::TraceAction(TRACE_LEVEL_RELEASE, TRACELEVEL::ACTION::COMPLETE, l_str_functionName, l_str_methodName, Translate(""));
    return (ASWGLOBAL::BOOL::TRUE);
  }

  function queryCellPelletResuspensionState(  ) variable {
    private variable l_str_methodName;
    private variable l_str_functionName;
    private dialog customDialog_5;
    private variable l_bool_returnValue;
    l_str_functionName = GetFunctionName();
    l_str_methodName = GetMethodFileName();
    TRACELEVEL::TraceAction(TRACE_LEVEL_RELEASE, TRACELEVEL::ACTION::PROGRESS, l_str_functionName, l_str_methodName, Translate(""));
    customDialog_5.InitCustomDialog("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");
    customDialog_5.ShowCustomDialog();
    l_bool_returnValue = customDialog_5.GetCustomDialogProperty( "ReturnValue" );
    if (l_bool_returnValue == ASWGLOBAL::DIALOG::NO)
    {
      TRACELEVEL::TraceAction(TRACE_LEVEL_RELEASE, TRACELEVEL::ACTION::COMPLETE, l_str_functionName, l_str_methodName, Translate("Samples have not been fully resuspended yet"));
      return (ASWGLOBAL::BOOL::FALSE);
    }
    TRACELEVEL::TraceAction(TRACE_LEVEL_RELEASE, TRACELEVEL::ACTION::COMPLETE, l_str_functionName, l_str_methodName, Translate(""));
    return (ASWGLOBAL::BOOL::TRUE);
  }

  function displayWarningMessage( variable i_str_dialogMainMessage, variable i_str_dialogLongMessage ) variable {
    private variable l_str_methodName;
    private variable l_str_functionName;
    private dialog customDialog_6;
    private variable l_bool_returnValue;
    l_str_functionName = GetFunctionName();
    l_str_methodName = GetMethodFileName();
    TRACELEVEL::TraceAction(TRACE_LEVEL_RELEASE, TRACELEVEL::ACTION::PROGRESS, l_str_functionName, l_str_methodName, Translate(""));
    customDialog_6.InitCustomDialog("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");
    customDialog_6.SetCustomDialogProperty( "textBlock2.Text", i_str_dialogMainMessage );
    customDialog_6.SetCustomDialogProperty( "textBlock3.Text", i_str_dialogLongMessage );
    customDialog_6.ShowCustomDialog();
    l_bool_returnValue = customDialog_6.GetCustomDialogProperty( "ReturnValue" );
    if (l_bool_returnValue == ASWGLOBAL::DIALOG::CANCEL)
    {
      TRACELEVEL::TraceAction(TRACE_LEVEL_RELEASE, TRACELEVEL::ACTION::COMPLETE, l_str_functionName, l_str_methodName, Translate("Fatal Error: The user requested to end the current assay run"));
      return (ASWGLOBAL::BOOL::FALSE);
    }
    TRACELEVEL::TraceAction(TRACE_LEVEL_RELEASE, TRACELEVEL::ACTION::COMPLETE, l_str_functionName, l_str_methodName, Translate(""));
    return (ASWGLOBAL::BOOL::TRUE);
  }
} // library namespace
