#pragma once
#include "Finalized Methods\\HSLTrcLib.hsl"
#include "MLSTARLiquidClassLib.hsl"
#include "HSLMthLib.hsl"
#include "HSLStrLib.hsl"
#include "HSLSeqLib.hsl"
#include "Finalized Methods\\HSLDevLib.hsl"
#include "Finalized Methods\\HSLLabwrAccess\\HSLLabwrAccess.hsl"
#include "HSLMETEDLib.hs_"
#include "Finalized Methods\\HSLMECCLib.hs_"

namespace STAR_VANTAGE_CHANNEL_MPH_FWCMD {
  function _96HeadAsp_Disp_STAR( variable _LabwareID, variable _Aspirate, variable _Dispense, variable _GotoTraverseBeforeAsp, variable _GotoTraverseAfterAsp, variable _LLDSearchHeight, variable _FixedHeightDuringAsp, variable _RetractHeight, variable _AspirationVolume, variable _liquidClass, variable _sleepBetweenPlungerMove, variable _GotoTraverseHeightBeforeDisp, variable _GotoTraverseHeightAfterDisp, variable _DispenseVolume, variable _fixedHeightDuringDispense, device & System, sequence & _sequenceLabWareID, variable _AspirateBlowoutVolume, variable _DispenseBlowoutVolume, variable _sequencePosition, variable _sleepDispense, variable _TrackingDistanceDuringAsp ) void ;
  function _96HeadAsp_Disp_VoV( variable _LabwareID, variable _Aspirate, variable _Dispense, variable _GotoTraverseBeforeAsp, variable _GotoTraverseAfterAsp, variable _LLDSearchHeight, variable _FixedHeightDuringAsp, variable _RetractHeight, variable _AspirationVolume, variable _liquidClass, variable _sleepBetweenPlungerMove, variable _GotoTraverseHeightBeforeDisp, variable _GotoTraverseHeightAfterDisp, variable _DispenseVolume, variable _fixedHeightDuringDispense, device & System, sequence & _sequenceLabWareID, variable _AspirateBlowoutVolume, variable _DispenseBlowoutVolume, variable _sequencePosition, variable _sleepDispense, variable _TrackingDistanceDuringAsp ) void ;
  function _Channels_Asp_Disp_STAR( variable _ChannelPattern, variable _Aspirate, variable _Dispense, sequence _sequenceAspDisp, variable _GotoTraverseBeforeAsp, variable _GotoTraverseAfterAsp, variable _GotoTraverseHeightBeforeDisp, variable _GotoTraverseHeightAfterDisp, variable _liquidClass, variable _LLDSearchHeight, variable _FixedHeightDuringAsp, variable _RetractHeight, variable _AspirationVolume, variable _AspirateBlowoutVolume, variable _sleepBetweenPlungerMove, variable _fixedHeightDuringDispense, variable _DispenseVolume, variable _DispenseBlowoutVolume, variable _sleepDispense, device & System ) void ;
  function _Channels_Asp_Disp_VoV( variable _ChannelPattern, variable _Aspirate, variable _Dispense, sequence _sequenceAspDisp, variable _GotoTraverseBeforeAsp, variable _GotoTraverseAfterAsp, variable _GotoTraverseHeightBeforeDisp, variable _GotoTraverseHeightAfterDisp, variable _liquidClass, variable _LLDSearchHeight, variable _FixedHeightDuringAsp, variable _RetractHeight, variable _AspirationVolume, variable _AspirateBlowoutVolume, variable _sleepBetweenPlungerMove, variable _fixedHeightDuringDispense, variable _DispenseVolume, variable _DispenseBlowoutVolume, variable _sleepDispense, device & System ) void ;
  private function xTenTurnToString( variable _floatNum, variable _formatLength ) variable ;
  private function xTenTurnToString_2decimals( variable _floatNum, variable _formatLength ) variable ;
  private function xTenTurnToString_NoDecimals( variable _floatNum, variable _formatLength ) variable ;
  function _InitLibrary() {
  }
  function _ExitLibrary() {
  }

  function _Channels_Asp_Disp_STAR( variable _ChannelPattern, variable _Aspirate, variable _Dispense, sequence _sequenceAspDisp, variable _GotoTraverseBeforeAsp, variable _GotoTraverseAfterAsp, variable _GotoTraverseHeightBeforeDisp, variable _GotoTraverseHeightAfterDisp, variable _liquidClass, variable _LLDSearchHeight, variable _FixedHeightDuringAsp, variable _RetractHeight, variable _AspirationVolume, variable _AspirateBlowoutVolume, variable _sleepBetweenPlungerMove, variable _fixedHeightDuringDispense, variable _DispenseVolume, variable _DispenseBlowoutVolume, variable _sleepDispense, device & System ) void {
    private variable loopCounter7;
    private variable Dispense;
    private variable FAspOverAsp;
    private variable sDispCommand;
    private variable FAspSettlingTime;
    private variable FDispSwapSpeed;
    private variable FAspBlowOut;
    private variable FDispFlowRate;
    private variable LC;
    private variable FAspFlowRate;
    private variable FDispmixFlowRate;
    private variable FDispSettlingTime;
    private variable FAspSwapSpeed;
    private variable FDispBlowOut;
    private variable Aspirate;
    private variable FAspAirTransport;
    private variable FDispStopFlowRate;
    private variable sAspCommand;
    private variable FAspMixFlow;
    private variable FDispStopbackVolume;
    private variable loopCounter4;
    private variable FDispAirTranspo;
    private timer timer2;
    private variable arrAspFWcmd[];
    private variable arrDispFWcmd[];
    private variable sFWCommandReturn;
    private variable _as;
    private variable _de;
    private variable _ta;
    private variable _ms;
    private variable _wt;
    private variable _xp;
    private variable _yp;
    private variable _th;
    private variable _te;
    private variable _lp;
    private variable _zx;
    private variable _dm;
    private variable _ds;
    private variable _ss;
    private variable _rv;
    private variable strFWCommand;
    private variable _at;
    private variable varType;
    private variable str;
    private variable x;
    private variable dummy;
    private variable y;
    private variable chn;
    private variable z;
    private variable labwareID;
    private variable addNullValues;
    private variable positionID;
    private variable spacer;
    private variable numberOfChannels;
    private variable pos;
    private variable chr_index;
    private variable loopCounter_SMT_Channels;
    private variable lp;
    private variable zx;
    private variable av;
    private variable fp;
    private variable zu;
    private variable zr;
    private variable zl_Asp;
    private variable zl_Disp;
    private variable yp;
    private variable xp;
    private variable tmp_fp;
    private variable tmp_av;
    private variable tmp_zu;
    private variable tmp_zr;
    private variable param_zx;
    private variable param_av;
    private variable param_lp;
    private variable param_yp;
    private variable param_xp;
    private variable param_fp;
    private variable param_zr;
    private variable param_zu;
    private variable param_zl_Disp;
    private variable param_zl_Asp;
    private variable tm;
    private variable param_tm;
    private variable _zl_Asp;
    private variable _zl_Disp;
    private variable param_positionIDs;
    private variable tmp_dv;
    private variable dv;
    private variable param_dv;
    private variable h_Asp;
    private variable h_Disp;
    private variable arrAspFwCmd_Size;
    private variable arrDispFwCmd_Size;
    private variable _gk;
    private variable _zr;
    private variable _zu;
    private variable _gi;
    private variable _gj;
    private variable _mc;
    private variable _mp;
    private variable _ip;
    private variable _fp;
    private variable _mh;
    private variable _mv;
    private variable _dv;
    private variable _av;
    private variable _oa;
    private variable retStringType;
    private variable _ba;
    private variable retStringType_Dispense;
    private variable _bvDispense;
    private variable AirTransportHeight;
    private variable _po;
    private variable _poString;
    private variable _llString;
    private variable _ll;
    private variable _lmString;
    private variable _lm;
    private variable _tm;
    Aspirate = Translate("C0AS");
    Dispense = Translate("C0DS");
    _gk = Translate("");
    _gj = Translate("");
    _gi = Translate("");
    _zr = Translate("");
    _zu = Translate("");
    _mc = Translate("");
    _mp = Translate("");
    _mv = Translate("");
    _mh = Translate("");
    _ip = Translate("");
    _fp = Translate("");
    _oa = Translate("");
    _tm = _ChannelPattern;
    if(0){
      _llString = Translate("");
    }
    _ll = 1;
    if(0){
      _ll = StrIStr(_ll);
      _llString = Translate("ll") + _ll;
    }
    if(0){
      _lmString = Translate("");
    }
    _lm = 0;
    if(0){
      _lm = StrIStr(_lm);
      _lmString = Translate("lm") + _lm;
    }
    _av = _AspirationVolume;
    _dv = _DispenseVolume;
    _ba = _AspirateBlowoutVolume;
    if(0){
      retStringType = StrGetType(_ba);
      if (retStringType != "s")
      {
        _ba = StrFStr(_ba);
      }
    }
    _bvDispense = _DispenseBlowoutVolume;
    if(0){
      retStringType_Dispense = StrGetType(_bvDispense);
      if (retStringType_Dispense != "s")
      {
        _bvDispense = StrFStr(_bvDispense);
      }
    }
    _po = _RetractHeight;
    if(0){
      _poString = Translate("");
      AirTransportHeight = xTenTurnToString(_po, 4);
      _poString = Translate("po") + AirTransportHeight;
    }
    MLSTAR_LIQUIDCLASSLib::Initialize(0);
    MLSTAR_LIQUIDCLASSLib::SelectLiquidClass(_liquidClass);
    FAspAirTransport = MLSTAR_LIQUIDCLASSLib::GetLiquidClassAspirateParameter(MLSTAR_LIQUIDCLASSLib::LIQUIDCLASS_PARAMS_ASP::AirTransportVolume);
    FAspBlowOut = MLSTAR_LIQUIDCLASSLib::GetLiquidClassAspirateParameter(MLSTAR_LIQUIDCLASSLib::LIQUIDCLASS_PARAMS_ASP::BlowOutVolume);
    FAspFlowRate = MLSTAR_LIQUIDCLASSLib::GetLiquidClassAspirateParameter(MLSTAR_LIQUIDCLASSLib::LIQUIDCLASS_PARAMS_ASP::FlowRate);
    FAspMixFlow = MLSTAR_LIQUIDCLASSLib::GetLiquidClassAspirateParameter(MLSTAR_LIQUIDCLASSLib::LIQUIDCLASS_PARAMS_ASP::MixFlowRate);
    FAspOverAsp = MLSTAR_LIQUIDCLASSLib::GetLiquidClassAspirateParameter(MLSTAR_LIQUIDCLASSLib::LIQUIDCLASS_PARAMS_ASP::OverAspirateVolume);
    FAspSettlingTime = MLSTAR_LIQUIDCLASSLib::GetLiquidClassAspirateParameter(MLSTAR_LIQUIDCLASSLib::LIQUIDCLASS_PARAMS_ASP::SettlingTime);
    FAspSwapSpeed = MLSTAR_LIQUIDCLASSLib::GetLiquidClassAspirateParameter(MLSTAR_LIQUIDCLASSLib::LIQUIDCLASS_PARAMS_ASP::SwapSpeed);
    FDispAirTranspo = MLSTAR_LIQUIDCLASSLib::GetLiquidClassDispenseParameter(MLSTAR_LIQUIDCLASSLib::LIQUIDCLASS_PARAMS_DISP::AirTransportVolume);
    FDispBlowOut = MLSTAR_LIQUIDCLASSLib::GetLiquidClassDispenseParameter(MLSTAR_LIQUIDCLASSLib::LIQUIDCLASS_PARAMS_DISP::BlowOutVolume);
    FDispFlowRate = MLSTAR_LIQUIDCLASSLib::GetLiquidClassDispenseParameter(MLSTAR_LIQUIDCLASSLib::LIQUIDCLASS_PARAMS_DISP::FlowRate);
    FDispmixFlowRate = MLSTAR_LIQUIDCLASSLib::GetLiquidClassDispenseParameter(MLSTAR_LIQUIDCLASSLib::LIQUIDCLASS_PARAMS_DISP::MixFlowRate);
    FDispSettlingTime = MLSTAR_LIQUIDCLASSLib::GetLiquidClassDispenseParameter(MLSTAR_LIQUIDCLASSLib::LIQUIDCLASS_PARAMS_DISP::SettlingTime);
    FDispStopbackVolume = MLSTAR_LIQUIDCLASSLib::GetLiquidClassDispenseParameter(MLSTAR_LIQUIDCLASSLib::LIQUIDCLASS_PARAMS_DISP::StopBackVolume);
    FDispStopFlowRate = MLSTAR_LIQUIDCLASSLib::GetLiquidClassDispenseParameter(MLSTAR_LIQUIDCLASSLib::LIQUIDCLASS_PARAMS_DISP::StopFlowRate);
    FDispSwapSpeed = MLSTAR_LIQUIDCLASSLib::GetLiquidClassDispenseParameter(MLSTAR_LIQUIDCLASSLib::LIQUIDCLASS_PARAMS_DISP::SwapSpeed);
    FAspFlowRate = xTenTurnToString(FAspFlowRate, 4);
    FAspSwapSpeed = xTenTurnToString(FAspSwapSpeed, 4);
    FAspBlowOut = xTenTurnToString(FAspBlowOut, 4);
    FDispBlowOut = xTenTurnToString(FDispBlowOut, 4);
    FDispSwapSpeed = xTenTurnToString(FDispSwapSpeed, 4);
    FAspAirTransport = xTenTurnToString(FAspAirTransport, 3);
    FDispAirTranspo = xTenTurnToString(FDispAirTranspo, 3);
    FAspMixFlow = xTenTurnToString(FAspMixFlow, 4);
    FDispmixFlowRate = xTenTurnToString(FDispmixFlowRate, 4);
    FAspSettlingTime = xTenTurnToString(FAspSettlingTime, 2);
    FDispSettlingTime = xTenTurnToString(FDispSettlingTime, 2);
    FAspOverAsp = xTenTurnToString(FAspOverAsp, 3);
    FDispFlowRate = xTenTurnToString(FDispFlowRate, 4);
    FDispStopbackVolume = xTenTurnToString(FDispStopbackVolume, 3);
    FDispStopFlowRate = xTenTurnToString(FDispStopFlowRate, 4);
    if(0){
      _at = Translate("at0&");
    }
    _at = Translate("at2&");
    varType = StrGetType(_po);
    if (varType != "s")
    {
      _po = xTenTurnToString(_po, 4);
      _po = StrConcat4(Translate("po"), _po, Translate("&"), Translate(""));
    }
    varType = StrGetType(_ip);
    if (varType == "s")
    {
      _ip = Translate("ip0000&");
    }
    else
    {
      _ip = xTenTurnToString(_ip, 4);
      _ip = StrConcat4(Translate("ip"), _ip, Translate("&"), Translate(""));
    }
    varType = StrGetType(_fp);
    if (varType == "s")
    {
      tmp_fp = Translate("");
    }
    else
    {
      tmp_fp = xTenTurnToString(_fp, 4);
    }
    varType = StrGetType(_av);
    if (varType == "s")
    {
      tmp_av = Translate("");
    }
    else
    {
      tmp_av = xTenTurnToString(_av, 5);
      if(0){
        tmp_av = xTenTurnToString_2decimals(_av, 5);
      }
    }
    varType = StrGetType(_dv);
    if (varType == "s")
    {
      tmp_dv = Translate("");
    }
    else
    {
      tmp_dv = xTenTurnToString(_dv, 5);
      if(0){
        tmp_dv = xTenTurnToString_2decimals(_dv, 5);
      }
    }
    varType = StrGetType(_ba);
    if (varType == "s")
    {
      _ba = StrConcat4(Translate("ba"), FAspBlowOut, Translate("&"), Translate(""));
    }
    else
    {
      if(0){
        _ba = xTenTurnToString_2decimals(_ba, 4);
      }
      _ba = xTenTurnToString(_ba, 4);
      _ba = StrConcat4(Translate("ba"), _ba, Translate("&"), Translate(""));
    }
    varType = StrGetType(_oa);
    if (varType != "s")
    {
      _oa = xTenTurnToString(_oa, 3);
      _oa = StrConcat4(Translate("oa"), _oa, Translate("&"), Translate(""));
    }
    varType = StrGetType(_lm);
    if (varType != "s")
    {
      _lm = StrConcat4(Translate("lm"), _lm, Translate("&"), Translate(""));
    }
    else
    {
      _lm = StrConcat4(Translate("lm"), Translate("1"), Translate("&"), Translate(""));
    }
    varType = StrGetType(_ll);
    if (varType != "s")
    {
      _ll = StrConcat4(Translate("ll"), _ll, Translate("&"), Translate(""));
    }
    else
    {
      _ll = StrConcat4(Translate("ll"), Translate("1"), Translate("&"), Translate(""));
    }
    varType = StrGetType(_mv);
    if (varType != "s")
    {
      _mv = xTenTurnToString(_mv, 5);
      _mv = StrConcat4(Translate("mv"), _mv, Translate("&"), Translate(""));
    }
    else
    {
      _mv = Translate("mv00000&");
    }
    varType = StrGetType(_mc);
    if (varType != "s")
    {
      _mc = xTenTurnToString_NoDecimals(_mc, 2);
      _mc = StrConcat4(Translate("mc"), _mc, Translate("&"), Translate(""));
    }
    else
    {
      _mc = Translate("mc00&");
    }
    varType = StrGetType(_mp);
    if (varType != "s")
    {
      _mp = xTenTurnToString(_mp, 3);
      _mp = StrConcat4(Translate("mp"), _mp, Translate("&"), Translate(""));
    }
    else
    {
      _mp = Translate("mp000&");
    }
    varType = StrGetType(_zu);
    if (varType == "s")
    {
      tmp_zu = Translate("");
    }
    else
    {
      tmp_zu = xTenTurnToString(_zu, 4);
    }
    varType = StrGetType(_zr);
    if (varType == "s")
    {
      tmp_zr = Translate("");
    }
    else
    {
      tmp_zr = xTenTurnToString(_zr, 4);
    }
    varType = StrGetType(_mh);
    if (varType == "s")
    {
      _mh = Translate("mh0000&");
    }
    else
    {
      _mh = xTenTurnToString(_mh, 4);
      _mh = StrConcat4(Translate("mh"), _mh, Translate("&"), Translate(""));
    }
    varType = StrGetType(_gj);
    if (varType != "s")
    {
      _gj = StrConcat2(Translate("gj"), _gj);
    }
    varType = StrGetType(_gi);
    if (varType != "s")
    {
      _gi = xTenTurnToString_NoDecimals(_gi, 3);
      _gi = Translate("gi") + _gi;
    }
    varType = StrGetType(_gk);
    if (varType != "s")
    {
      _gk = StrConcat2(Translate("gk"), _gk);
    }
    _as = StrConcat4(Translate("as"), FAspFlowRate, Translate("&"), Translate(""));
    _de = StrConcat4(Translate("de"), FAspSwapSpeed, Translate("&"), Translate(""));
    _ta = StrConcat4(Translate("ta"), FAspAirTransport, Translate("&"), Translate(""));
    _ms = StrConcat4(Translate("ms"), FAspMixFlow, Translate("&"), Translate(""));
    _wt = StrConcat4(Translate("wt"), FAspSettlingTime, Translate("&"), Translate(""));
    numberOfChannels = StrGetLength(_tm);
    param_positionIDs = Translate("");
    param_tm = Translate("");
    param_xp = Translate("");
    param_yp = Translate("");
    param_lp = Translate("");
    param_zl_Asp = Translate("");
    param_zl_Disp = Translate("");
    param_zx = Translate("");
    param_fp = Translate("");
    param_av = Translate("");
    param_dv = Translate("");
    param_zu = Translate("");
    param_zr = Translate("");
    {
      for(loopCounter_SMT_Channels = 0; loopCounter_SMT_Channels < numberOfChannels;)
      {
        loopCounter_SMT_Channels = loopCounter_SMT_Channels + 1;
        chr_index = loopCounter_SMT_Channels - 1;
        chn = StrMid(_tm, chr_index, 1);
        addNullValues = 0;
        if (chn == "1")
        {
          pos = _sequenceAspDisp.GetCurrentPosition();
          if (pos > 0)
          {
            labwareID = SeqGetLabwareId(_sequenceAspDisp);
            positionID = SeqGetPositionId(_sequenceAspDisp);
            SeqIncrement(_sequenceAspDisp, 1);
            DevGetLabwarePositionEx(System, labwareID, positionID, x, y, z, dummy);
            Trace ("*************  x: ", x);
            Trace ("*************  y: ", y);
            Trace ("*************  z: ", z);
            xp = xTenTurnToString(x, 5);
            yp = xTenTurnToString(y, 4);
            zl_Asp = _FixedHeightDuringAsp + z;
            zl_Disp = _fixedHeightDuringDispense + z;
            zl_Asp = xTenTurnToString(zl_Asp, 4);
            zl_Disp = xTenTurnToString(zl_Disp, 4);
            lp = _LLDSearchHeight + z;
            lp = xTenTurnToString(lp, 4);
            zx = xTenTurnToString(z, 4);
            fp = tmp_fp;
            av = tmp_av;
            dv = tmp_dv;
            zu = tmp_zu;
            zr = tmp_zr;
            tm = Translate("1");
          }
          else
          {
            addNullValues = 1;
          }
        }
        else
        {
          addNullValues = 1;
        }
        if (addNullValues == 1)
        {
          xp = Translate("00000");
          yp = Translate("0000");
          zx = Translate("0000");
          lp = Translate("2450");
          zl_Asp = Translate("2450");
          zl_Disp = Translate("2450");
          fp = Translate("0000");
          av = Translate("00000");
          dv = Translate("00000");
          zu = Translate("0000");
          zr = Translate("00000");
          tm = Translate("0");
          positionID = Translate("");
        }
        if (loopCounter_SMT_Channels > 1)
        {
          spacer = Translate(" ");
        }
        else
        {
          spacer = Translate("");
        }
        param_positionIDs = StrConcat4(param_positionIDs, spacer, positionID, Translate(""));
        param_tm = StrConcat4(param_tm, spacer, tm, Translate(""));
        param_xp = StrConcat4(param_xp, spacer, xp, Translate(""));
        param_yp = StrConcat4(param_yp, spacer, yp, Translate(""));
        param_lp = StrConcat4(param_lp, spacer, lp, Translate(""));
        param_zl_Asp = StrConcat4(param_zl_Asp, spacer, zl_Asp, Translate(""));
        param_zl_Disp = StrConcat4(param_zl_Disp, spacer, zl_Disp, Translate(""));
        param_zx = StrConcat4(param_zx, spacer, zx, Translate(""));
        param_fp = StrConcat4(param_fp, spacer, fp, Translate(""));
        param_av = StrConcat4(param_av, spacer, av, Translate(""));
        param_dv = StrConcat4(param_dv, spacer, dv, Translate(""));
        param_zu = StrConcat4(param_zu, spacer, zu, Translate(""));
        param_zr = StrConcat4(param_zr, spacer, zr, Translate(""));
      }
    }
    Trace(".......");
    Trace("ASP/DISP FROM ----  Labware ID for Asp / Disp= ", labwareID, " // ", param_positionIDs);
    Trace("Channels=", _tm);
    Trace(".......");
    _tm = StrConcat2(Translate("tm"), param_tm);
    _xp = StrConcat2(Translate("xp"), param_xp);
    _yp = StrConcat2(Translate("yp"), param_yp);
    _lp = StrConcat2(Translate("lp"), param_lp);
    _zl_Asp = StrConcat2(Translate("zl"), param_zl_Asp);
    _zl_Disp = StrConcat2(Translate("zl"), param_zl_Disp);
    _zx = StrConcat2(Translate("zx"), param_zx);
    if (tmp_fp != "")
    {
      _fp = StrConcat2(Translate("fp"), param_fp);
    }
    if (tmp_av != "")
    {
      _av = StrConcat2(Translate("av"), param_av);
    }
    if (tmp_dv != "")
    {
      _dv = StrConcat2(Translate("dv"), param_dv);
    }
    if (tmp_zu != "")
    {
      _zu = StrConcat2(Translate("zu"), param_zu);
    }
    if (tmp_zr != "")
    {
      _zr = StrConcat2(Translate("zr"), param_zr);
    }
    h_Asp = _FixedHeightDuringAsp + z;
    h_Asp = xTenTurnToString(h_Asp, 4);
    if (_GotoTraverseBeforeAsp == 1)
    {
      _th = Translate("th2450");
    }
    else
    {
      _th = StrConcat4(Translate("th"), h_Asp, Translate(""), Translate(""));
    }
    if (_GotoTraverseAfterAsp == 1)
    {
      _te = Translate("te2450");
    }
    else
    {
      if(0){
        _te = Translate("te1911");
      }
      _te = StrConcat4(Translate("te"), h_Asp, Translate(""), Translate(""));
      Trace ("*************  _te: ", _te);
      Trace ("*************  h_Asp: ", h_Asp);
    }
    arrAspFWcmd.SetSize(0);
    arrAspFWcmd.AddAsLast(_at);
    arrAspFWcmd.AddAsLast(_tm);
    arrAspFWcmd.AddAsLast(_xp);
    arrAspFWcmd.AddAsLast(_yp);
    arrAspFWcmd.AddAsLast(_th);
    arrAspFWcmd.AddAsLast(_te);
    arrAspFWcmd.AddAsLast(_lp);
    arrAspFWcmd.AddAsLast(_zl_Asp);
    arrAspFWcmd.AddAsLast(_zx);
    arrAspFWcmd.AddAsLast(_ip);
    arrAspFWcmd.AddAsLast(_fp);
    arrAspFWcmd.AddAsLast(_av);
    arrAspFWcmd.AddAsLast(_as);
    arrAspFWcmd.AddAsLast(_ta);
    arrAspFWcmd.AddAsLast(_ba);
    arrAspFWcmd.AddAsLast(_oa);
    arrAspFWcmd.AddAsLast(_lm);
    arrAspFWcmd.AddAsLast(_ll);
    arrAspFWcmd.AddAsLast(_de);
    arrAspFWcmd.AddAsLast(_wt);
    arrAspFWcmd.AddAsLast(_mv);
    arrAspFWcmd.AddAsLast(_mc);
    arrAspFWcmd.AddAsLast(_mp);
    arrAspFWcmd.AddAsLast(_ms);
    arrAspFWcmd.AddAsLast(_gj);
    arrAspFWcmd.AddAsLast(_gi);
    arrAspFWcmd.AddAsLast(_gk);
    arrAspFWcmd.AddAsLast(_zu);
    arrAspFWcmd.AddAsLast(_zr);
    arrAspFWcmd.AddAsLast(_mh);
    arrAspFWcmd.AddAsLast(_po);
    _dm = Translate("dm3&");
    h_Disp = _fixedHeightDuringDispense + z;
    h_Disp = xTenTurnToString(h_Disp, 4);
    if (_GotoTraverseHeightBeforeDisp == 1)
    {
      _th = Translate("th2450");
    }
    else
    {
      _th = StrConcat4(Translate("th"), h_Disp, Translate(""), Translate(""));
    }
    if (_GotoTraverseHeightAfterDisp == 1)
    {
      _te = Translate("te2450");
    }
    else
    {
      if(0){
        _te = Translate("te1911");
      }
      _te = StrConcat4(Translate("te"), h_Disp, Translate(""), Translate(""));
    }
    _ds = StrConcat4(Translate("ds"), FDispFlowRate, Translate("&"), Translate(""));
    _ds = StrConcat4(Translate("ds"), FDispFlowRate, Translate("&"), Translate(""));
    _ss = StrConcat4(Translate("ss"), FDispStopFlowRate, Translate("&"), Translate(""));
    _rv = Translate("rv") + FDispStopbackVolume;
    _rv = StrConcat4(Translate("rv"), FDispStopbackVolume, Translate("&"), Translate(""));
    _ta = StrConcat4(Translate("ta"), FDispAirTranspo, Translate("&"), Translate(""));
    varType = StrGetType(_bvDispense);
    if (varType == "s")
    {
      _bvDispense = StrConcat4(Translate("ba"), FDispBlowOut, Translate("&"), Translate(""));
    }
    else
    {
      if(0){
        _bvDispense = xTenTurnToString_2decimals(_bvDispense, 4);
      }
      _bvDispense = xTenTurnToString(_bvDispense, 4);
      _bvDispense = StrConcat4(Translate("ba"), _bvDispense, Translate("&"), Translate(""));
    }
    _de = StrConcat4(Translate("de"), FDispSwapSpeed, Translate("&"), Translate(""));
    _wt = StrConcat4(Translate("wt"), FDispSettlingTime, Translate("&"), Translate(""));
    arrDispFWcmd.SetSize(0);
    arrDispFWcmd.AddAsLast(_dm);
    arrDispFWcmd.AddAsLast(_tm);
    arrDispFWcmd.AddAsLast(_xp);
    arrDispFWcmd.AddAsLast(_yp);
    arrDispFWcmd.AddAsLast(_th);
    arrDispFWcmd.AddAsLast(_te);
    arrDispFWcmd.AddAsLast(_lp);
    arrDispFWcmd.AddAsLast(_zl_Disp);
    arrDispFWcmd.AddAsLast(_zx);
    arrDispFWcmd.AddAsLast(_ip);
    arrDispFWcmd.AddAsLast(_fp);
    arrDispFWcmd.AddAsLast(_dv);
    arrDispFWcmd.AddAsLast(_ds);
    arrDispFWcmd.AddAsLast(_ta);
    arrDispFWcmd.AddAsLast(_bvDispense);
    arrDispFWcmd.AddAsLast(_lm);
    arrDispFWcmd.AddAsLast(_ll);
    arrDispFWcmd.AddAsLast(_de);
    arrDispFWcmd.AddAsLast(_wt);
    arrDispFWcmd.AddAsLast(_zu);
    arrDispFWcmd.AddAsLast(_zr);
    arrDispFWcmd.AddAsLast(_mh);
    arrDispFWcmd.AddAsLast(_po);
    arrDispFWcmd.AddAsLast(_ss);
    arrDispFWcmd.AddAsLast(_rv);
    arrDispFWcmd.AddAsLast(_mv);
    arrDispFWcmd.AddAsLast(_mc);
    arrDispFWcmd.AddAsLast(_mp);
    arrDispFWcmd.AddAsLast(_ms);
    sAspCommand = arrAspFWcmd.ElementAt( 1 -1);
    sDispCommand = Translate("");
    arrAspFwCmd_Size=arrAspFWcmd.GetSize();
    arrAspFwCmd_Size = arrAspFwCmd_Size - 1;
    {
      for(loopCounter4 = 0; loopCounter4 < arrAspFwCmd_Size;)
      {
        loopCounter4 = loopCounter4 + 1;
        LC = loopCounter4 + 1;
        TrcTrace4(Translate("loopCounter="), LC, Translate("        param="), arrAspFWcmd.ElementAt( LC -1));
        str = arrAspFWcmd.ElementAt( LC -1);
        varType = StrGetType(str);
        if (varType == "s")
        {
          if (str != "")
          {
            sAspCommand = StrConcat2(sAspCommand, str);
          }
        }
        else
        {
          sAspCommand = StrConcat2(sAspCommand, str);
        }
      }
    }
    sAspCommand = StrConcat2(sAspCommand, str);
    arrDispFwCmd_Size=arrDispFWcmd.GetSize();
    {
      for(loopCounter7 = 0; loopCounter7 < arrDispFwCmd_Size;)
      {
        loopCounter7 = loopCounter7 + 1;
        TrcTrace4(Translate("loopCounter="), loopCounter7, Translate("        param="), arrDispFWcmd.ElementAt( loopCounter7 -1));
        str = arrDispFWcmd.ElementAt( loopCounter7 -1);
        varType = StrGetType(str);
        if (varType == "s")
        {
          if (str != "")
          {
            sDispCommand = StrConcat2(sDispCommand, str);
          }
        }
        else
        {
          sDispCommand = StrConcat2(sDispCommand, str);
        }
      }
    }
    TrcTrace(Translate("Aspirate FW command -- "), sAspCommand);
    TrcTrace(Translate("Dispense FW command -- "), sDispCommand);
    if (_Aspirate == 1)
    {
      MECC::TraceComment(Translate("-----------------------------------DISPENSE DRIVE POSITION BEFORE ASPIRATE"));
      {
        	variable arrRetValues[];
        	arrRetValues = System._1FB5DA01_3ACB_11d4_AE1F_0004ACB1DCB2("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"); // FirmwareCommand
        	sFWCommandReturn = arrRetValues[3];
      }
      Trace("Channels Z position BEFORE Aspiration: " , sFWCommandReturn);
      strFWCommand = StrConcat2(Aspirate, sAspCommand);
      Trace("Aspiration fw command sent: " , strFWCommand);
      System._1FB5DA01_3ACB_11d4_AE1F_0004ACB1DCB2("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"); // FirmwareCommand
      if( 0 == timer2.SetTimer(_sleepBetweenPlungerMove) )
      {
            MECC::RaiseRuntimeErrorEx(-1355939584, MECC::IDS::stepNameTimerStart, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
      }
      MECC::TraceComment(Translate("-----------------------------------DISPENSE DRIVE POSITION AFTER ASPIRATE"));
      {
        	variable arrRetValues[];
        	arrRetValues = System._1FB5DA01_3ACB_11d4_AE1F_0004ACB1DCB2("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"); // FirmwareCommand
        	sFWCommandReturn = arrRetValues[3];
      }
      Trace("Channels Z position AFTER Aspiration: " , sFWCommandReturn);
      if( 0 == timer2.WaitTimer(hslTrue, hslTrue) )
      {
            MECC::RaiseRuntimeErrorEx(-1339162368, MECC::IDS::stepNameTimerWait, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
      }
    }
    if (_Dispense == 1)
    {
      MECC::TraceComment(Translate("-----------------------------------DISPENSE DRIVE POSITION BEFORE DISPENSE"));
      {
        	variable arrRetValues[];
        	arrRetValues = System._1FB5DA01_3ACB_11d4_AE1F_0004ACB1DCB2("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"); // FirmwareCommand
        	sFWCommandReturn = arrRetValues[3];
      }
      Trace("Channels Z position BEFORE Dispense: " , sFWCommandReturn);
      strFWCommand = StrConcat2(Dispense, sDispCommand);
      Trace("Dispense fw command sent: " , strFWCommand);
      System._1FB5DA01_3ACB_11d4_AE1F_0004ACB1DCB2("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"); // FirmwareCommand
      if( 0 == timer2.SetTimer(_sleepDispense) )
      {
            MECC::RaiseRuntimeErrorEx(-1355939584, MECC::IDS::stepNameTimerStart, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
      }
      MECC::TraceComment(Translate("-----------------------------------DISPENSE DRIVE POSITION AFTER DISPENSE"));
      {
        	variable arrRetValues[];
        	arrRetValues = System._1FB5DA01_3ACB_11d4_AE1F_0004ACB1DCB2("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"); // FirmwareCommand
        	sFWCommandReturn = arrRetValues[3];
      }
      Trace("Channels Z position AFTER Dispense: " , sFWCommandReturn);
      if( 0 == timer2.WaitTimer(hslTrue, hslTrue) )
      {
            MECC::RaiseRuntimeErrorEx(-1339162368, MECC::IDS::stepNameTimerWait, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
      }
    }
  }

  private function xTenTurnToString( variable _floatNum, variable _formatLength ) variable {
    private variable leadingZeroesToAdd;
    private variable sLeadZeroes;
    private variable ilength;
    private variable loopCounter4;
    sLeadZeroes = Translate("");
    _floatNum = _floatNum * 10;
    _floatNum = MthCeiling(_floatNum);
    _floatNum = StrIStr(_floatNum);
    ilength = StrGetLength(_floatNum);
    leadingZeroesToAdd = _formatLength - ilength;
    {
      for(loopCounter4 = 0; loopCounter4 < leadingZeroesToAdd;)
      {
        loopCounter4 = loopCounter4 + 1;
        sLeadZeroes = sLeadZeroes + Translate("0");
      }
    }
    _floatNum = sLeadZeroes + _floatNum;
    if(0){
      TrcTrace(Translate("returned parameter value for FW command -- "), _floatNum);
    }
    return (_floatNum);
  }

  private function xTenTurnToString_2decimals( variable _floatNum, variable _formatLength ) variable {
    private variable leadingZeroesToAdd;
    private variable sLeadZeroes;
    private variable ilength;
    private variable loopCounter4;
    sLeadZeroes = Translate("");
    _floatNum = _floatNum * 100;
    _floatNum = MthCeiling(_floatNum);
    _floatNum = StrIStr(_floatNum);
    ilength = StrGetLength(_floatNum);
    leadingZeroesToAdd = _formatLength - ilength;
    {
      for(loopCounter4 = 0; loopCounter4 < leadingZeroesToAdd;)
      {
        loopCounter4 = loopCounter4 + 1;
        sLeadZeroes = sLeadZeroes + Translate("0");
      }
    }
    _floatNum = sLeadZeroes + _floatNum;
    if(0){
      TrcTrace(Translate("returned parameter value for FW command -- "), _floatNum);
    }
    return (_floatNum);
  }

  private function xTenTurnToString_NoDecimals( variable _floatNum, variable _formatLength ) variable {
    private variable leadingZeroesToAdd;
    private variable sLeadZeroes;
    private variable ilength;
    private variable loopCounter4;
    sLeadZeroes = Translate("");
    if(0){
      _floatNum = _floatNum * 100;
      _floatNum = MthCeiling(_floatNum);
    }
    _floatNum = StrIStr(_floatNum);
    ilength = StrGetLength(_floatNum);
    leadingZeroesToAdd = _formatLength - ilength;
    {
      for(loopCounter4 = 0; loopCounter4 < leadingZeroesToAdd;)
      {
        loopCounter4 = loopCounter4 + 1;
        sLeadZeroes = sLeadZeroes + Translate("0");
      }
    }
    _floatNum = sLeadZeroes + _floatNum;
    if(0){
      TrcTrace(Translate("returned parameter value for FW command -- "), _floatNum);
    }
    return (_floatNum);
  }

  function _96HeadAsp_Disp_STAR( variable _LabwareID, variable _Aspirate, variable _Dispense, variable _GotoTraverseBeforeAsp, variable _GotoTraverseAfterAsp, variable _LLDSearchHeight, variable _FixedHeightDuringAsp, variable _RetractHeight, variable _AspirationVolume, variable _liquidClass, variable _sleepBetweenPlungerMove, variable _GotoTraverseHeightBeforeDisp, variable _GotoTraverseHeightAfterDisp, variable _DispenseVolume, variable _fixedHeightDuringDispense, device & System, sequence & _sequenceLabWareID, variable _AspirateBlowoutVolume, variable _DispenseBlowoutVolume, variable _sequencePosition, variable _sleepDispense, variable _TrackingDistanceDuringAsp ) void {
    private variable fLabRZ;
    private variable retStringType;
    private variable AspVolume;
    private variable _bvDispense;
    private variable _cj;
    private variable loopCounter7;
    private variable _zq;
    private variable _hp;
    private variable FAspOverAsp;
    private variable Dispense;
    private variable sFWCommandReturn;
    private variable _cm;
    private variable _hs;
    private variable _zt;
    private variable sDispCommand;
    private variable _xs;
    private variable _ppString;
    private variable FAspSettlingTime;
    private variable _hc;
    private variable _zv;
    private variable retStringType_Dispense;
    private variable FDispSwapSpeed;
    private variable _ze;
    private variable _hv;
    private variable FDispFlowRate;
    private variable FAspBlowOut;
    private variable _xd;
    private variable _iw;
    private variable _mj;
    private variable _da;
    private variable _lz;
    private variable _es;
    private variable LC;
    private variable _ix;
    private variable _cr;
    private variable _vt;
    private variable FDispmixFlowRate;
    private variable FAspFlowRate;
    private variable FDispSettlingTime;
    private variable _cmString;
    private variable _zh;
    private variable _wv;
    private variable FAspSwapSpeed;
    private variable _aa;
    private variable AirTransportHeight;
    private variable _pp;
    private variable _ev;
    private variable _yh;
    private variable FDispBlowOut;
    private variable _bs;
    private variable fLabX;
    private variable FAspAirTransport;
    private variable Aspirate;
    private variable FDispStopFlowRate;
    private variable FAspMixFlow;
    private variable _wh;
    private variable fLabY;
    private variable _fh;
    private variable _df;
    private variable sAspCommand;
    private variable _dg;
    private variable FDispStopbackVolume;
    private variable fLabZ;
    private variable _cw;
    private variable _bv;
    private variable loopCounter4;
    private variable _zm;
    private variable _cx;
    private variable DispVolume;
    private variable _af;
    private variable _ag;
    private variable FDispAirTranspo;
    private timer timer2;
    private variable arrAspFWcmd[];
    private variable arrDispFWcmd[];
    private variable _csString;
    private variable _cs;
    private variable FAspTrackingDistance;
    _cx = Translate("");
    _cj = Translate("");
    _cr = Translate("");
    _zq = Translate("");
    _zv = Translate("");
    _hv = Translate("");
    _hc = Translate("");
    _hp = Translate("");
    _mj = Translate("");
    _iw = Translate("");
    _ix = Translate("");
    _wv = Translate("");
    _af = _AspirationVolume;
    _df = _DispenseVolume;
    _csString = Translate("");
    _cs = 1;
    _cs = StrIStr(_cs);
    _csString = Translate("cs") + _cs;
    _cmString = Translate("");
    _cm = 0;
    _cm = StrIStr(_cm);
    _cmString = Translate("cm") + _cm;
    _pp = _RetractHeight;
    _ppString = Translate("");
    AirTransportHeight = xTenTurnToString(_pp, 4);
    _ppString = Translate("pp") + AirTransportHeight;
    _bv = _AspirateBlowoutVolume;
    retStringType = StrGetType(_bv);
    if (retStringType != "s")
    {
      _bv = StrFStr(_bv);
    }
    _bvDispense = _DispenseBlowoutVolume;
    retStringType_Dispense = StrGetType(_bvDispense);
    if (retStringType_Dispense != "s")
    {
      _bvDispense = StrFStr(_bvDispense);
    }
    _fh = _TrackingDistanceDuringAsp;
    retStringType_Dispense = StrGetType(_fh);
    if (retStringType_Dispense != "s")
    {
      _fh = StrFStr(_fh);
    }
    if (_fh == "")
    {
      _fh = Translate("fh000");
    }
    else
    {
      FAspTrackingDistance = xTenTurnToString(_TrackingDistanceDuringAsp, 3);
      _fh = Translate("fh") + FAspTrackingDistance;
    }
    if (_iw == "")
    {
      _iw = Translate("iw000");
    }
    if (_mj == "")
    {
      _mj = Translate("mj000");
    }
    if (_LabwareID == "")
    {
      _sequenceLabWareID.SetCurrentPosition(_sequencePosition);
      _LabwareID = SeqGetLabwareId(_sequenceLabWareID);
    }
    TrcTrace(Translate("labware ID to be used for ASP/DISP --->  "), _LabwareID);
    MLSTAR_LIQUIDCLASSLib::Initialize(0);
    MLSTAR_LIQUIDCLASSLib::SelectLiquidClass(_liquidClass);
    FAspAirTransport = MLSTAR_LIQUIDCLASSLib::GetLiquidClassAspirateParameter(MLSTAR_LIQUIDCLASSLib::LIQUIDCLASS_PARAMS_ASP::AirTransportVolume);
    FAspBlowOut = MLSTAR_LIQUIDCLASSLib::GetLiquidClassAspirateParameter(MLSTAR_LIQUIDCLASSLib::LIQUIDCLASS_PARAMS_ASP::BlowOutVolume);
    FAspFlowRate = MLSTAR_LIQUIDCLASSLib::GetLiquidClassAspirateParameter(MLSTAR_LIQUIDCLASSLib::LIQUIDCLASS_PARAMS_ASP::FlowRate);
    FAspMixFlow = MLSTAR_LIQUIDCLASSLib::GetLiquidClassAspirateParameter(MLSTAR_LIQUIDCLASSLib::LIQUIDCLASS_PARAMS_ASP::MixFlowRate);
    FAspOverAsp = MLSTAR_LIQUIDCLASSLib::GetLiquidClassAspirateParameter(MLSTAR_LIQUIDCLASSLib::LIQUIDCLASS_PARAMS_ASP::OverAspirateVolume);
    FAspSettlingTime = MLSTAR_LIQUIDCLASSLib::GetLiquidClassAspirateParameter(MLSTAR_LIQUIDCLASSLib::LIQUIDCLASS_PARAMS_ASP::SettlingTime);
    FAspSwapSpeed = MLSTAR_LIQUIDCLASSLib::GetLiquidClassAspirateParameter(MLSTAR_LIQUIDCLASSLib::LIQUIDCLASS_PARAMS_ASP::SwapSpeed);
    FDispAirTranspo = MLSTAR_LIQUIDCLASSLib::GetLiquidClassDispenseParameter(MLSTAR_LIQUIDCLASSLib::LIQUIDCLASS_PARAMS_DISP::AirTransportVolume);
    FDispBlowOut = MLSTAR_LIQUIDCLASSLib::GetLiquidClassDispenseParameter(MLSTAR_LIQUIDCLASSLib::LIQUIDCLASS_PARAMS_DISP::BlowOutVolume);
    FDispFlowRate = MLSTAR_LIQUIDCLASSLib::GetLiquidClassDispenseParameter(MLSTAR_LIQUIDCLASSLib::LIQUIDCLASS_PARAMS_DISP::FlowRate);
    FDispmixFlowRate = MLSTAR_LIQUIDCLASSLib::GetLiquidClassDispenseParameter(MLSTAR_LIQUIDCLASSLib::LIQUIDCLASS_PARAMS_DISP::MixFlowRate);
    FDispSettlingTime = MLSTAR_LIQUIDCLASSLib::GetLiquidClassDispenseParameter(MLSTAR_LIQUIDCLASSLib::LIQUIDCLASS_PARAMS_DISP::SettlingTime);
    FDispStopbackVolume = MLSTAR_LIQUIDCLASSLib::GetLiquidClassDispenseParameter(MLSTAR_LIQUIDCLASSLib::LIQUIDCLASS_PARAMS_DISP::StopBackVolume);
    FDispStopFlowRate = MLSTAR_LIQUIDCLASSLib::GetLiquidClassDispenseParameter(MLSTAR_LIQUIDCLASSLib::LIQUIDCLASS_PARAMS_DISP::StopFlowRate);
    FDispSwapSpeed = MLSTAR_LIQUIDCLASSLib::GetLiquidClassDispenseParameter(MLSTAR_LIQUIDCLASSLib::LIQUIDCLASS_PARAMS_DISP::SwapSpeed);
    FAspAirTransport = xTenTurnToString(FAspAirTransport, 3);
    FAspBlowOut = xTenTurnToString(FAspBlowOut, 5);
    FAspFlowRate = xTenTurnToString(FAspFlowRate, 4);
    FAspMixFlow = xTenTurnToString(FAspMixFlow, 4);
    FAspOverAsp = xTenTurnToString(FAspOverAsp, 5);
    FAspSettlingTime = xTenTurnToString(FAspSettlingTime, 2);
    FAspSwapSpeed = xTenTurnToString(FAspSwapSpeed, 4);
    FDispAirTranspo = xTenTurnToString(FDispAirTranspo, 3);
    FDispBlowOut = xTenTurnToString(FDispBlowOut, 5);
    FDispmixFlowRate = xTenTurnToString(FDispmixFlowRate, 4);
    FDispFlowRate = xTenTurnToString(FDispFlowRate, 4);
    FDispSettlingTime = xTenTurnToString(FDispSettlingTime, 2);
    FDispStopbackVolume = xTenTurnToString(FDispStopbackVolume, 3);
    FDispStopFlowRate = xTenTurnToString(FDispStopFlowRate, 4);
    FDispSwapSpeed = xTenTurnToString(FDispSwapSpeed, 4);
    HSLLabwrAccess::AbsolutePositionValuesGetForLabwareID(System, _LabwareID, fLabX, fLabY, fLabZ, fLabRZ);
    fLabX = xTenTurnToString(fLabX, 5);
    fLabY = xTenTurnToString(fLabY, 4);
    _FixedHeightDuringAsp = _FixedHeightDuringAsp + fLabZ;
    _fixedHeightDuringDispense = _fixedHeightDuringDispense + fLabZ;
    _LLDSearchHeight = _LLDSearchHeight + fLabZ;
    _FixedHeightDuringAsp = xTenTurnToString(_FixedHeightDuringAsp, 4);
    _fixedHeightDuringDispense = xTenTurnToString(_fixedHeightDuringDispense, 4);
    _LLDSearchHeight = xTenTurnToString(_LLDSearchHeight, 4);
    fLabZ = xTenTurnToString(fLabZ, 4);
    AspVolume = xTenTurnToString(_af, 5);
    DispVolume = xTenTurnToString(_df, 5);
    Aspirate = Translate("C0EA");
    Dispense = Translate("C0ED");
    _aa = Translate("aa0");
    _af = Translate("af") + AspVolume;
    _ag = Translate("ag") + FAspFlowRate;
    _bs = Translate("bs") + FAspSwapSpeed;
    if (_bv == "")
    {
      _bv = Translate("bv") + FAspBlowOut;
    }
    else
    {
      _bv = StrFVal(_bv);
      FAspBlowOut = xTenTurnToString(_bv, 5);
      _bv = Translate("bv") + FAspBlowOut;
    }
    _vt = Translate("vt") + FAspAirTransport;
    _cw = Translate("cw") + Translate("FFFFFFFFFFFFFFFFFFFFFFFF");
    _hs = Translate("hs") + FAspMixFlow;
    _wh = Translate("wh") + FAspSettlingTime;
    _xd = Translate("xd") + Translate("0");
    _xs = Translate("xs") + fLabX;
    _yh = Translate("yh") + fLabY;
    _zt = Translate("zt") + _FixedHeightDuringAsp;
    if (_GotoTraverseBeforeAsp == 1)
    {
      _zh = Translate("zh2450");
    }
    else
    {
      _zh = Translate("zh") + _FixedHeightDuringAsp;
    }
    if (_GotoTraverseAfterAsp == 1)
    {
      _ze = Translate("ze2450");
    }
    else
    {
      if (_Dispense == 1)
      {
        _ze = Translate("ze") + _fixedHeightDuringDispense;
      }
      else
      {
        _ze = Translate("ze") + _FixedHeightDuringAsp;
      }
    }
    _lz = Translate("lz") + _LLDSearchHeight;
    _zm = Translate("zm") + fLabZ;
    arrAspFWcmd.SetSize(0);
    arrAspFWcmd.AddAsLast(_aa);
    arrAspFWcmd.AddAsLast(_af);
    arrAspFWcmd.AddAsLast(_ag);
    arrAspFWcmd.AddAsLast(_bs);
    arrAspFWcmd.AddAsLast(_bv);
    arrAspFWcmd.AddAsLast(_cj);
    arrAspFWcmd.AddAsLast(_cmString);
    arrAspFWcmd.AddAsLast(_cr);
    arrAspFWcmd.AddAsLast(_csString);
    arrAspFWcmd.AddAsLast(_cw);
    arrAspFWcmd.AddAsLast(_cx);
    arrAspFWcmd.AddAsLast(_fh);
    arrAspFWcmd.AddAsLast(_hc);
    arrAspFWcmd.AddAsLast(_hp);
    arrAspFWcmd.AddAsLast(_hs);
    arrAspFWcmd.AddAsLast(_hv);
    arrAspFWcmd.AddAsLast(_iw);
    arrAspFWcmd.AddAsLast(_ix);
    arrAspFWcmd.AddAsLast(_lz);
    arrAspFWcmd.AddAsLast(_mj);
    arrAspFWcmd.AddAsLast(_ppString);
    arrAspFWcmd.AddAsLast(_vt);
    arrAspFWcmd.AddAsLast(_wh);
    arrAspFWcmd.AddAsLast(_wv);
    arrAspFWcmd.AddAsLast(_xd);
    arrAspFWcmd.AddAsLast(_xs);
    arrAspFWcmd.AddAsLast(_yh);
    arrAspFWcmd.AddAsLast(_ze);
    arrAspFWcmd.AddAsLast(_zh);
    arrAspFWcmd.AddAsLast(_zm);
    arrAspFWcmd.AddAsLast(_zq);
    arrAspFWcmd.AddAsLast(_zt);
    arrAspFWcmd.AddAsLast(_zv);
    _da = Translate("da3");
    _df = Translate("df") + DispVolume;
    if (_GotoTraverseHeightBeforeDisp == 1)
    {
      _zh = Translate("zh2450");
    }
    else
    {
      _zh = Translate("zh") + _fixedHeightDuringDispense;
    }
    if (_GotoTraverseHeightAfterDisp == 1)
    {
      _ze = Translate("ze2450");
    }
    else
    {
      if (_Aspirate == 1)
      {
        _ze = Translate("ze") + _FixedHeightDuringAsp;
      }
      else
      {
        _ze = Translate("ze") + _fixedHeightDuringDispense;
      }
    }
    _zt = Translate("zt") + _fixedHeightDuringDispense;
    _dg = Translate("dg") + FDispFlowRate;
    _es = Translate("es") + FDispStopFlowRate;
    _ev = Translate("ev") + FDispStopbackVolume;
    _vt = Translate("vt") + FDispAirTranspo;
    if (_bvDispense == "")
    {
      _bvDispense = Translate("bv") + FDispBlowOut;
    }
    else
    {
      _bvDispense = StrFVal(_bvDispense);
      FDispBlowOut = xTenTurnToString(_bvDispense, 5);
      _bvDispense = Translate("bv") + FDispBlowOut;
    }
    _bs = Translate("bs") + FDispSwapSpeed;
    _wh = Translate("wh") + FDispSettlingTime;
    arrDispFWcmd.SetSize(0);
    arrDispFWcmd.AddAsLast(_da);
    arrDispFWcmd.AddAsLast(_xs);
    arrDispFWcmd.AddAsLast(_xd);
    arrDispFWcmd.AddAsLast(_yh);
    arrDispFWcmd.AddAsLast(_zm);
    arrDispFWcmd.AddAsLast(_zv);
    arrDispFWcmd.AddAsLast(_zq);
    arrDispFWcmd.AddAsLast(_lz);
    arrDispFWcmd.AddAsLast(_zt);
    arrDispFWcmd.AddAsLast(_ppString);
    arrDispFWcmd.AddAsLast(_iw);
    arrDispFWcmd.AddAsLast(_fh);
    arrDispFWcmd.AddAsLast(_zh);
    arrDispFWcmd.AddAsLast(_ze);
    arrDispFWcmd.AddAsLast(_df);
    arrDispFWcmd.AddAsLast(_dg);
    arrDispFWcmd.AddAsLast(_es);
    arrDispFWcmd.AddAsLast(_ev);
    arrDispFWcmd.AddAsLast(_vt);
    arrDispFWcmd.AddAsLast(_bvDispense);
    arrDispFWcmd.AddAsLast(_cmString);
    arrDispFWcmd.AddAsLast(_csString);
    arrDispFWcmd.AddAsLast(_bs);
    arrDispFWcmd.AddAsLast(_wh);
    arrDispFWcmd.AddAsLast(_mj);
    arrDispFWcmd.AddAsLast(_cw);
    sAspCommand = arrAspFWcmd.ElementAt( 1 -1);
    {
      for(loopCounter4 = 0; loopCounter4 < 32;)
      {
        loopCounter4 = loopCounter4 + 1;
        LC = loopCounter4 + 1;
        sAspCommand = sAspCommand + arrAspFWcmd.ElementAt( LC -1);
      }
    }
    sDispCommand = Translate("");
    {
      for(loopCounter7 = 0; loopCounter7 < 26;)
      {
        loopCounter7 = loopCounter7 + 1;
        sDispCommand = sDispCommand + arrDispFWcmd.ElementAt( loopCounter7 -1);
      }
    }
    TrcTrace(Translate("Aspirate FW command -- "), sAspCommand);
    TrcTrace(Translate("Dispense FW command -- "), sDispCommand);
    if (_Aspirate == 1)
    {
      MECC::TraceComment(Translate("-----------------------------------DISPENSE DRIVE POSITION BEFORE ASPIRATE"));
      {
        	variable arrRetValues[];
        	arrRetValues = System._1FB5DA01_3ACB_11d4_AE1F_0004ACB1DCB2("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"); // FirmwareCommand
        	sFWCommandReturn = arrRetValues[3];
      }
      System._1FB5DA01_3ACB_11d4_AE1F_0004ACB1DCB2("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"); // FirmwareCommand
      if( 0 == timer2.SetTimer(_sleepBetweenPlungerMove) )
      {
            MECC::RaiseRuntimeErrorEx(-1355939584, MECC::IDS::stepNameTimerStart, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
      }
      MECC::TraceComment(Translate("-----------------------------------DISPENSE DRIVE POSITION AFTER ASPIRATE"));
      {
        	variable arrRetValues[];
        	arrRetValues = System._1FB5DA01_3ACB_11d4_AE1F_0004ACB1DCB2("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"); // FirmwareCommand
        	sFWCommandReturn = arrRetValues[3];
      }
      if( 0 == timer2.WaitTimer(hslTrue, hslTrue) )
      {
            MECC::RaiseRuntimeErrorEx(-1339162368, MECC::IDS::stepNameTimerWait, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
      }
    }
    if (_Dispense == 1)
    {
      MECC::TraceComment(Translate("-----------------------------------DISPENSE DRIVE POSITION BEFORE DISPENSE"));
      {
        	variable arrRetValues[];
        	arrRetValues = System._1FB5DA01_3ACB_11d4_AE1F_0004ACB1DCB2("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"); // FirmwareCommand
        	sFWCommandReturn = arrRetValues[3];
      }
      System._1FB5DA01_3ACB_11d4_AE1F_0004ACB1DCB2("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"); // FirmwareCommand
      if( 0 == timer2.SetTimer(_sleepDispense) )
      {
            MECC::RaiseRuntimeErrorEx(-1355939584, MECC::IDS::stepNameTimerStart, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
      }
      MECC::TraceComment(Translate("-----------------------------------DISPENSE DRIVE POSITION AFTER DISPENSE"));
      {
        	variable arrRetValues[];
        	arrRetValues = System._1FB5DA01_3ACB_11d4_AE1F_0004ACB1DCB2("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"); // FirmwareCommand
        	sFWCommandReturn = arrRetValues[3];
      }
      if( 0 == timer2.WaitTimer(hslTrue, hslTrue) )
      {
            MECC::RaiseRuntimeErrorEx(-1339162368, MECC::IDS::stepNameTimerWait, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
      }
    }
  }

  function _96HeadAsp_Disp_VoV( variable _LabwareID, variable _Aspirate, variable _Dispense, variable _GotoTraverseBeforeAsp, variable _GotoTraverseAfterAsp, variable _LLDSearchHeight, variable _FixedHeightDuringAsp, variable _RetractHeight, variable _AspirationVolume, variable _liquidClass, variable _sleepBetweenPlungerMove, variable _GotoTraverseHeightBeforeDisp, variable _GotoTraverseHeightAfterDisp, variable _DispenseVolume, variable _fixedHeightDuringDispense, device & System, sequence & _sequenceLabWareID, variable _AspirateBlowoutVolume, variable _DispenseBlowoutVolume, variable _sequencePosition, variable _sleepDispense, variable _TrackingDistanceDuringAsp ) void {
    private variable AspVolume;
    private variable retStringType;
    private variable fLabRZ;
    private variable loopCounter7;
    private variable FAspOverAsp;
    private variable Dispense;
    private variable sFWCommandReturn;
    private variable sDispCommand;
    private variable FAspSettlingTime;
    private variable FDispSwapSpeed;
    private variable retStringType_Dispense;
    private variable FDispFlowRate;
    private variable FAspBlowOut;
    private variable LC;
    private variable _ix;
    private variable FDispmixFlowRate;
    private variable FAspFlowRate;
    private variable FAspSwapSpeed;
    private variable FDispSettlingTime;
    private variable AirTransportHeight;
    private variable FDispBlowOut;
    private variable FAspAirTransport;
    private variable fLabX;
    private variable Aspirate;
    private variable FAspMixFlow;
    private variable FDispStopFlowRate;
    private variable FAspTrackingDistance;
    private variable fLabY;
    private variable sAspCommand;
    private variable FDispStopbackVolume;
    private variable fLabZ;
    private variable DispVolume;
    private variable loopCounter4;
    private variable FDispAirTranspo;
    private timer timer2;
    private variable arrAspFWcmd[];
    private variable arrDispFWcmd[];
    private variable _yp;
    private variable _xp;
    private variable _at;
    private variable _th;
    private variable _te;
    private variable _lp;
    private variable _zl;
    private variable _zx;
    private variable _ip;
    private variable _fp;
    private variable _av;
    private variable _dv;
    private variable _as;
    private variable _ds;
    private variable _dm;
    private variable _ta;
    private variable _ba;
    private variable _oa;
    private variable _lm;
    private variable _lmString;
    private variable _ll;
    private variable _llString;
    private variable _de;
    private variable _wt;
    private variable _baDispense;
    private variable _mv;
    private variable _mc;
    private variable _mp;
    private variable _ms;
    private variable _zu;
    private variable _ss;
    private variable _rv;
    private variable _zr;
    private variable _mh;
    private variable _gj;
    private variable _gk;
    private variable _gi;
    private variable _cw;
    private variable _po;
    private variable _poString;
    private variable arrAspFwCmd_Size;
    private variable arrDispFwCmd_Size;
    private variable _xd;
    _gk = Translate("");
    _gj = Translate("");
    _gi = Translate("");
    _zr = Translate("");
    _zu = Translate("");
    _mv = Translate("");
    _mc = Translate("");
    _mp = Translate("");
    _mh = Translate("");
    _ip = Translate("");
    _ix = Translate("");
    _oa = Translate("");
    _av = _AspirationVolume;
    _dv = _DispenseVolume;
    _llString = Translate("");
    _ll = 1;
    _ll = StrIStr(_ll);
    _llString = Translate("ll") + _ll;
    _lmString = Translate("");
    _lm = 0;
    _lm = StrIStr(_lm);
    _lmString = Translate("lm") + _lm;
    _po = _RetractHeight;
    _poString = Translate("");
    AirTransportHeight = xTenTurnToString(_po, 4);
    _poString = Translate("po") + AirTransportHeight;
    _ba = _AspirateBlowoutVolume;
    retStringType = StrGetType(_ba);
    if (retStringType != "s")
    {
      _ba = StrFStr(_ba);
    }
    _baDispense = _DispenseBlowoutVolume;
    retStringType_Dispense = StrGetType(_baDispense);
    if (retStringType_Dispense != "s")
    {
      _baDispense = StrFStr(_baDispense);
    }
    _fp = _TrackingDistanceDuringAsp;
    retStringType_Dispense = StrGetType(_fp);
    if (retStringType_Dispense != "s")
    {
      _fp = StrFStr(_fp);
    }
    if (_fp == "")
    {
      _fp = Translate("fp000");
    }
    else
    {
      FAspTrackingDistance = xTenTurnToString(_TrackingDistanceDuringAsp, 3);
      _fp = Translate("fp") + FAspTrackingDistance;
    }
    if (_ip == "")
    {
      _ip = Translate("ip000");
    }
    if (_mh == "")
    {
      _mh = Translate("mh000");
    }
    if (_LabwareID == "")
    {
      _sequenceLabWareID.SetCurrentPosition(_sequencePosition);
      _LabwareID = SeqGetLabwareId(_sequenceLabWareID);
    }
    TrcTrace(Translate("labware ID to be used for ASP/DISP --->  "), _LabwareID);
    MLSTAR_LIQUIDCLASSLib::Initialize(0);
    MLSTAR_LIQUIDCLASSLib::SelectLiquidClass(_liquidClass);
    FAspAirTransport = MLSTAR_LIQUIDCLASSLib::GetLiquidClassAspirateParameter(MLSTAR_LIQUIDCLASSLib::LIQUIDCLASS_PARAMS_ASP::AirTransportVolume);
    FAspBlowOut = MLSTAR_LIQUIDCLASSLib::GetLiquidClassAspirateParameter(MLSTAR_LIQUIDCLASSLib::LIQUIDCLASS_PARAMS_ASP::BlowOutVolume);
    FAspFlowRate = MLSTAR_LIQUIDCLASSLib::GetLiquidClassAspirateParameter(MLSTAR_LIQUIDCLASSLib::LIQUIDCLASS_PARAMS_ASP::FlowRate);
    FAspMixFlow = MLSTAR_LIQUIDCLASSLib::GetLiquidClassAspirateParameter(MLSTAR_LIQUIDCLASSLib::LIQUIDCLASS_PARAMS_ASP::MixFlowRate);
    FAspOverAsp = MLSTAR_LIQUIDCLASSLib::GetLiquidClassAspirateParameter(MLSTAR_LIQUIDCLASSLib::LIQUIDCLASS_PARAMS_ASP::OverAspirateVolume);
    FAspSettlingTime = MLSTAR_LIQUIDCLASSLib::GetLiquidClassAspirateParameter(MLSTAR_LIQUIDCLASSLib::LIQUIDCLASS_PARAMS_ASP::SettlingTime);
    FAspSwapSpeed = MLSTAR_LIQUIDCLASSLib::GetLiquidClassAspirateParameter(MLSTAR_LIQUIDCLASSLib::LIQUIDCLASS_PARAMS_ASP::SwapSpeed);
    FDispAirTranspo = MLSTAR_LIQUIDCLASSLib::GetLiquidClassDispenseParameter(MLSTAR_LIQUIDCLASSLib::LIQUIDCLASS_PARAMS_DISP::AirTransportVolume);
    FDispBlowOut = MLSTAR_LIQUIDCLASSLib::GetLiquidClassDispenseParameter(MLSTAR_LIQUIDCLASSLib::LIQUIDCLASS_PARAMS_DISP::BlowOutVolume);
    FDispFlowRate = MLSTAR_LIQUIDCLASSLib::GetLiquidClassDispenseParameter(MLSTAR_LIQUIDCLASSLib::LIQUIDCLASS_PARAMS_DISP::FlowRate);
    FDispmixFlowRate = MLSTAR_LIQUIDCLASSLib::GetLiquidClassDispenseParameter(MLSTAR_LIQUIDCLASSLib::LIQUIDCLASS_PARAMS_DISP::MixFlowRate);
    FDispSettlingTime = MLSTAR_LIQUIDCLASSLib::GetLiquidClassDispenseParameter(MLSTAR_LIQUIDCLASSLib::LIQUIDCLASS_PARAMS_DISP::SettlingTime);
    FDispStopbackVolume = MLSTAR_LIQUIDCLASSLib::GetLiquidClassDispenseParameter(MLSTAR_LIQUIDCLASSLib::LIQUIDCLASS_PARAMS_DISP::StopBackVolume);
    FDispStopFlowRate = MLSTAR_LIQUIDCLASSLib::GetLiquidClassDispenseParameter(MLSTAR_LIQUIDCLASSLib::LIQUIDCLASS_PARAMS_DISP::StopFlowRate);
    FDispSwapSpeed = MLSTAR_LIQUIDCLASSLib::GetLiquidClassDispenseParameter(MLSTAR_LIQUIDCLASSLib::LIQUIDCLASS_PARAMS_DISP::SwapSpeed);
    FAspAirTransport = xTenTurnToString(FAspAirTransport, 3);
    FAspBlowOut = xTenTurnToString(FAspBlowOut, 5);
    FAspFlowRate = xTenTurnToString(FAspFlowRate, 4);
    FAspMixFlow = xTenTurnToString(FAspMixFlow, 4);
    FAspOverAsp = xTenTurnToString(FAspOverAsp, 5);
    FAspSettlingTime = xTenTurnToString(FAspSettlingTime, 2);
    FAspSwapSpeed = xTenTurnToString(FAspSwapSpeed, 4);
    FDispAirTranspo = xTenTurnToString(FDispAirTranspo, 3);
    FDispBlowOut = xTenTurnToString(FDispBlowOut, 5);
    FDispmixFlowRate = xTenTurnToString(FDispmixFlowRate, 4);
    FDispFlowRate = xTenTurnToString(FDispFlowRate, 4);
    FDispSettlingTime = xTenTurnToString(FDispSettlingTime, 2);
    FDispStopbackVolume = xTenTurnToString(FDispStopbackVolume, 3);
    FDispStopFlowRate = xTenTurnToString(FDispStopFlowRate, 4);
    FDispSwapSpeed = xTenTurnToString(FDispSwapSpeed, 4);
    HSLLabwrAccess::AbsolutePositionValuesGetForLabwareID(System, _LabwareID, fLabX, fLabY, fLabZ, fLabRZ);
    fLabX = xTenTurnToString(fLabX, 5);
    fLabY = xTenTurnToString(fLabY, 4);
    _FixedHeightDuringAsp = _FixedHeightDuringAsp + fLabZ;
    _fixedHeightDuringDispense = _fixedHeightDuringDispense + fLabZ;
    _LLDSearchHeight = _LLDSearchHeight + fLabZ;
    _FixedHeightDuringAsp = xTenTurnToString(_FixedHeightDuringAsp, 4);
    _fixedHeightDuringDispense = xTenTurnToString(_fixedHeightDuringDispense, 4);
    _LLDSearchHeight = xTenTurnToString(_LLDSearchHeight, 4);
    fLabZ = xTenTurnToString(fLabZ, 4);
    AspVolume = xTenTurnToString_2decimals(_av, 6);
    DispVolume = xTenTurnToString_2decimals(_dv, 6);
    if(0){
      AspVolume = xTenTurnToString(_av, 6);
      DispVolume = xTenTurnToString(_dv, 6);
    }
    Aspirate = Translate("####");
    Dispense = Translate("####");
    _at = Translate("at0");
    _av = Translate("av") + AspVolume;
    _as = Translate("as") + FAspFlowRate;
    _de = Translate("de") + FAspSwapSpeed;
    if (_ba == "")
    {
      _ba = Translate("ba") + FAspBlowOut;
    }
    else
    {
      _ba = StrFVal(_ba);
      FAspBlowOut = xTenTurnToString_2decimals(_ba, 6);
      if(0){
        FAspBlowOut = xTenTurnToString(_ba, 6);
      }
      _ba = Translate("ba") + FAspBlowOut;
    }
    _ta = Translate("ta") + FAspAirTransport;
    _cw = Translate("cw") + Translate("FFFFFFFFFFFFFFFFFFFFFFFF");
    _ms = Translate("ms") + FAspMixFlow;
    _wt = Translate("wt") + FAspSettlingTime;
    _xd = Translate("xd") + Translate("0");
    _xp = Translate("xp") + fLabX;
    _yp = Translate("yp") + fLabY;
    _zl = Translate("zl") + _FixedHeightDuringAsp;
    if (_GotoTraverseBeforeAsp == 1)
    {
      _th = Translate("th2450");
    }
    else
    {
      _th = Translate("th") + _FixedHeightDuringAsp;
    }
    if (_GotoTraverseAfterAsp == 1)
    {
      _te = Translate("te2450");
    }
    else
    {
      if (_Dispense == 1)
      {
        _te = Translate("te") + _fixedHeightDuringDispense;
      }
      else
      {
        _te = Translate("te") + _FixedHeightDuringAsp;
      }
    }
    _lp = Translate("lp") + _LLDSearchHeight;
    _zx = Translate("zx") + fLabZ;
    arrAspFWcmd.SetSize(0);
    arrAspFWcmd.AddAsLast(_at);
    arrAspFWcmd.AddAsLast(_xp);
    arrAspFWcmd.AddAsLast(_yp);
    arrAspFWcmd.AddAsLast(_th);
    arrAspFWcmd.AddAsLast(_te);
    arrAspFWcmd.AddAsLast(_lp);
    arrAspFWcmd.AddAsLast(_zl);
    arrAspFWcmd.AddAsLast(_zx);
    arrAspFWcmd.AddAsLast(_ip);
    arrAspFWcmd.AddAsLast(_fp);
    arrAspFWcmd.AddAsLast(_av);
    arrAspFWcmd.AddAsLast(_as);
    arrAspFWcmd.AddAsLast(_ta);
    arrAspFWcmd.AddAsLast(_ba);
    arrAspFWcmd.AddAsLast(_oa);
    arrAspFWcmd.AddAsLast(_lmString);
    arrAspFWcmd.AddAsLast(_llString);
    arrAspFWcmd.AddAsLast(_de);
    arrAspFWcmd.AddAsLast(_wt);
    arrAspFWcmd.AddAsLast(_mv);
    arrAspFWcmd.AddAsLast(_mc);
    arrAspFWcmd.AddAsLast(_mp);
    arrAspFWcmd.AddAsLast(_ms);
    arrAspFWcmd.AddAsLast(_zu);
    arrAspFWcmd.AddAsLast(_zr);
    arrAspFWcmd.AddAsLast(_mh);
    arrAspFWcmd.AddAsLast(_gj);
    arrAspFWcmd.AddAsLast(_gk);
    arrAspFWcmd.AddAsLast(_gi);
    arrAspFWcmd.AddAsLast(_cw);
    arrAspFWcmd.AddAsLast(_poString);
    if(0){
      arrAspFWcmd.AddAsLast(_ix);
      arrAspFWcmd.AddAsLast(_xd);
    }
    _dm = Translate("dm3");
    _dv = Translate("dv") + DispVolume;
    if (_GotoTraverseHeightBeforeDisp == 1)
    {
      _th = Translate("th2450");
    }
    else
    {
      _th = Translate("th") + _fixedHeightDuringDispense;
    }
    if (_GotoTraverseHeightAfterDisp == 1)
    {
      _te = Translate("te2450");
    }
    else
    {
      if (_Aspirate == 1)
      {
        _te = Translate("te") + _FixedHeightDuringAsp;
      }
      else
      {
        _te = Translate("te") + _fixedHeightDuringDispense;
      }
    }
    _zl = Translate("zl") + _fixedHeightDuringDispense;
    _ds = Translate("ds") + FDispFlowRate;
    _ss = Translate("ss") + FDispStopFlowRate;
    _rv = Translate("rv") + FDispStopbackVolume;
    _ta = Translate("ta") + FDispAirTranspo;
    if (_baDispense == "")
    {
      _baDispense = Translate("ba") + FDispBlowOut;
    }
    else
    {
      _baDispense = StrFVal(_baDispense);
      FDispBlowOut = xTenTurnToString_2decimals(_baDispense, 6);
      if(0){
        FDispBlowOut = xTenTurnToString(_baDispense, 6);
      }
      _baDispense = Translate("ba") + FDispBlowOut;
    }
    _de = Translate("de") + FDispSwapSpeed;
    _wt = Translate("wt") + FDispSettlingTime;
    arrDispFWcmd.SetSize(0);
    arrDispFWcmd.AddAsLast(_dm);
    arrDispFWcmd.AddAsLast(_xp);
    arrDispFWcmd.AddAsLast(_yp);
    arrDispFWcmd.AddAsLast(_th);
    arrDispFWcmd.AddAsLast(_te);
    arrDispFWcmd.AddAsLast(_lp);
    arrDispFWcmd.AddAsLast(_zl);
    arrDispFWcmd.AddAsLast(_zx);
    arrDispFWcmd.AddAsLast(_ip);
    arrDispFWcmd.AddAsLast(_fp);
    arrDispFWcmd.AddAsLast(_dv);
    arrDispFWcmd.AddAsLast(_ds);
    arrDispFWcmd.AddAsLast(_ta);
    arrDispFWcmd.AddAsLast(_baDispense);
    arrDispFWcmd.AddAsLast(_lmString);
    arrDispFWcmd.AddAsLast(_llString);
    arrDispFWcmd.AddAsLast(_de);
    arrDispFWcmd.AddAsLast(_wt);
    arrDispFWcmd.AddAsLast(_ss);
    arrDispFWcmd.AddAsLast(_rv);
    arrDispFWcmd.AddAsLast(_zu);
    arrDispFWcmd.AddAsLast(_zr);
    arrDispFWcmd.AddAsLast(_mh);
    arrDispFWcmd.AddAsLast(_cw);
    arrDispFWcmd.AddAsLast(_poString);
    if(0){
      arrDispFWcmd.AddAsLast(_xd);
    }
    arrAspFwCmd_Size=arrAspFWcmd.GetSize();
    arrAspFwCmd_Size = arrAspFwCmd_Size - 1;
    sAspCommand = Translate("A1HMDA");
    sAspCommand = sAspCommand + arrAspFWcmd.ElementAt( 1 -1);
    {
      for(loopCounter4 = 0; loopCounter4 < arrAspFwCmd_Size;)
      {
        loopCounter4 = loopCounter4 + 1;
        LC = loopCounter4 + 1;
        sAspCommand = sAspCommand + arrAspFWcmd.ElementAt( LC -1);
      }
    }
    arrDispFwCmd_Size=arrDispFWcmd.GetSize();
    sDispCommand = Translate("A1HMDD");
    {
      for(loopCounter7 = 0; loopCounter7 < arrDispFwCmd_Size;)
      {
        loopCounter7 = loopCounter7 + 1;
        sDispCommand = sDispCommand + arrDispFWcmd.ElementAt( loopCounter7 -1);
      }
    }
    TrcTrace(Translate("Aspirate FW command -- "), sAspCommand);
    TrcTrace(Translate("Dispense FW command -- "), sDispCommand);
    if (_Aspirate == 1)
    {
      MECC::TraceComment(Translate("-----------------------------------DISPENSE DRIVE POSITION BEFORE ASPIRATE"));
      {
        	variable arrRetValues[];
        	arrRetValues = System._1FB5DA01_3ACB_11d4_AE1F_0004ACB1DCB2("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"); // FirmwareCommand
        	sFWCommandReturn = arrRetValues[3];
      }
      System._1FB5DA01_3ACB_11d4_AE1F_0004ACB1DCB2("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"); // FirmwareCommand
      if( 0 == timer2.SetTimer(_sleepBetweenPlungerMove) )
      {
            MECC::RaiseRuntimeErrorEx(-1355939584, MECC::IDS::stepNameTimerStart, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
      }
      MECC::TraceComment(Translate("-----------------------------------DISPENSE DRIVE POSITION AFTER ASPIRATE"));
      {
        	variable arrRetValues[];
        	arrRetValues = System._1FB5DA01_3ACB_11d4_AE1F_0004ACB1DCB2("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"); // FirmwareCommand
        	sFWCommandReturn = arrRetValues[3];
      }
      if( 0 == timer2.WaitTimer(hslTrue, hslTrue) )
      {
            MECC::RaiseRuntimeErrorEx(-1339162368, MECC::IDS::stepNameTimerWait, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
      }
    }
    if (_Dispense == 1)
    {
      MECC::TraceComment(Translate("-----------------------------------DISPENSE DRIVE POSITION BEFORE DISPENSE"));
      {
        	variable arrRetValues[];
        	arrRetValues = System._1FB5DA01_3ACB_11d4_AE1F_0004ACB1DCB2("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"); // FirmwareCommand
        	sFWCommandReturn = arrRetValues[3];
      }
      System._1FB5DA01_3ACB_11d4_AE1F_0004ACB1DCB2("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"); // FirmwareCommand
      if( 0 == timer2.SetTimer(_sleepDispense) )
      {
            MECC::RaiseRuntimeErrorEx(-1355939584, MECC::IDS::stepNameTimerStart, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
      }
      MECC::TraceComment(Translate("-----------------------------------DISPENSE DRIVE POSITION AFTER DISPENSE"));
      {
        	variable arrRetValues[];
        	arrRetValues = System._1FB5DA01_3ACB_11d4_AE1F_0004ACB1DCB2("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"); // FirmwareCommand
        	sFWCommandReturn = arrRetValues[3];
      }
      if( 0 == timer2.WaitTimer(hslTrue, hslTrue) )
      {
            MECC::RaiseRuntimeErrorEx(-1339162368, MECC::IDS::stepNameTimerWait, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
      }
    }
  }

  function _Channels_Asp_Disp_VoV( variable _ChannelPattern, variable _Aspirate, variable _Dispense, sequence _sequenceAspDisp, variable _GotoTraverseBeforeAsp, variable _GotoTraverseAfterAsp, variable _GotoTraverseHeightBeforeDisp, variable _GotoTraverseHeightAfterDisp, variable _liquidClass, variable _LLDSearchHeight, variable _FixedHeightDuringAsp, variable _RetractHeight, variable _AspirationVolume, variable _AspirateBlowoutVolume, variable _sleepBetweenPlungerMove, variable _fixedHeightDuringDispense, variable _DispenseVolume, variable _DispenseBlowoutVolume, variable _sleepDispense, device & System ) void {
    private variable loopCounter7;
    private variable _mc;
    private variable _ip;
    private variable retStringType;
    private variable _bvDispense;
    private variable x;
    private variable tmp_zr;
    private variable param_zx;
    private variable dv;
    private variable _yp;
    private variable dummy;
    private variable y;
    private variable _zr;
    private variable _zl_Asp;
    private variable _xp;
    private variable _dm;
    private variable FAspOverAsp;
    private variable _mv;
    private variable tmp_fp;
    private variable Dispense;
    private variable sFWCommandReturn;
    private variable arrAspFwCmd_Size;
    private variable chn;
    private variable zl_Asp;
    private variable _zl_Disp;
    private variable z;
    private variable h_Asp;
    private variable _tm;
    private variable _fp;
    private variable zl_Disp;
    private variable av;
    private variable lp;
    private variable param_dv;
    private variable tmp_zu;
    private variable sDispCommand;
    private variable FAspSettlingTime;
    private variable _zu;
    private variable _mh;
    private variable _poString;
    private variable retStringType_Dispense;
    private variable labwareID;
    private variable param_zl_Disp;
    private variable FDispSwapSpeed;
    private variable varType;
    private variable FAspBlowOut;
    private variable addNullValues;
    private variable param_lp;
    private variable FDispFlowRate;
    private variable _wt;
    private variable param_av;
    private variable yp;
    private variable _ds;
    private variable strFWCommand;
    private variable _zx;
    private variable h_Disp;
    private variable _ta;
    private variable LC;
    private variable xp;
    private variable zr;
    private variable FAspFlowRate;
    private variable FDispmixFlowRate;
    private variable FAspSwapSpeed;
    private variable _po;
    private variable FDispSettlingTime;
    private variable _ba;
    private variable FDispBlowOut;
    private variable fp;
    private variable AirTransportHeight;
    private variable tm;
    private variable _ll;
    private variable tmp_dv;
    private variable _ss;
    private variable _as;
    private variable param_yp;
    private variable arrDispFwCmd_Size;
    private variable positionID;
    private variable _de;
    private variable FAspAirTransport;
    private variable _dv;
    private variable str;
    private variable _lm;
    private variable param_positionIDs;
    private variable spacer;
    private variable Aspirate;
    private variable param_xp;
    private variable param_zr;
    private variable _gi;
    private variable _at;
    private variable FAspMixFlow;
    private variable numberOfChannels;
    private variable _llString;
    private variable zu;
    private variable _te;
    private variable FDispStopFlowRate;
    private variable sAspCommand;
    private variable _lmString;
    private variable FDispStopbackVolume;
    private variable _oa;
    private variable tmp_av;
    private variable _gj;
    private variable param_fp;
    private variable param_tm;
    private variable _mp;
    private variable pos;
    private variable _rv;
    private variable loopCounter4;
    private variable _lp;
    private variable chr_index;
    private variable _gk;
    private variable _av;
    private variable zx;
    private variable _th;
    private variable param_zu;
    private variable param_zl_Asp;
    private variable FDispAirTranspo;
    private variable _ms;
    private variable loopCounter_SMT_Channels;
    private timer timer2;
    private variable arrAspFWcmd[];
    private variable arrDispFWcmd[];
    private variable _lb;
    private variable _lc;
    private variable _la;
    private variable _zo;
    Aspirate = Translate("C0AS");
    Dispense = Translate("C0DS");
    _gk = Translate("");
    _gj = Translate("");
    _gi = Translate("");
    _zr = Translate("");
    _zu = Translate("");
    _mc = Translate("");
    _mp = Translate("");
    _mv = Translate("");
    _mh = Translate("");
    _ip = Translate("");
    _fp = Translate("");
    _oa = Translate("");
    _zo = Translate("");
    _la = Translate("");
    _lb = Translate("");
    _lc = Translate("");
    _tm = _ChannelPattern;
    if(0){
      _llString = Translate("");
    }
    _ll = 1;
    if(0){
      _ll = StrIStr(_ll);
      _llString = Translate("ll") + _ll;
    }
    if(0){
      _lmString = Translate("");
    }
    _lm = 0;
    if(0){
      _lm = StrIStr(_lm);
      _lmString = Translate("lm") + _lm;
    }
    _av = _AspirationVolume;
    _dv = _DispenseVolume;
    _ba = _AspirateBlowoutVolume;
    if(0){
      retStringType = StrGetType(_ba);
      if (retStringType != "s")
      {
        _ba = StrFStr(_ba);
      }
    }
    _bvDispense = _DispenseBlowoutVolume;
    if(0){
      retStringType_Dispense = StrGetType(_bvDispense);
      if (retStringType_Dispense != "s")
      {
        _bvDispense = StrFStr(_bvDispense);
      }
    }
    _po = _RetractHeight;
    if(0){
      _poString = Translate("");
      AirTransportHeight = xTenTurnToString(_po, 4);
      _poString = Translate("po") + AirTransportHeight;
    }
    MLSTAR_LIQUIDCLASSLib::Initialize(0);
    MLSTAR_LIQUIDCLASSLib::SelectLiquidClass(_liquidClass);
    FAspAirTransport = MLSTAR_LIQUIDCLASSLib::GetLiquidClassAspirateParameter(MLSTAR_LIQUIDCLASSLib::LIQUIDCLASS_PARAMS_ASP::AirTransportVolume);
    FAspBlowOut = MLSTAR_LIQUIDCLASSLib::GetLiquidClassAspirateParameter(MLSTAR_LIQUIDCLASSLib::LIQUIDCLASS_PARAMS_ASP::BlowOutVolume);
    FAspFlowRate = MLSTAR_LIQUIDCLASSLib::GetLiquidClassAspirateParameter(MLSTAR_LIQUIDCLASSLib::LIQUIDCLASS_PARAMS_ASP::FlowRate);
    FAspMixFlow = MLSTAR_LIQUIDCLASSLib::GetLiquidClassAspirateParameter(MLSTAR_LIQUIDCLASSLib::LIQUIDCLASS_PARAMS_ASP::MixFlowRate);
    FAspOverAsp = MLSTAR_LIQUIDCLASSLib::GetLiquidClassAspirateParameter(MLSTAR_LIQUIDCLASSLib::LIQUIDCLASS_PARAMS_ASP::OverAspirateVolume);
    FAspSettlingTime = MLSTAR_LIQUIDCLASSLib::GetLiquidClassAspirateParameter(MLSTAR_LIQUIDCLASSLib::LIQUIDCLASS_PARAMS_ASP::SettlingTime);
    FAspSwapSpeed = MLSTAR_LIQUIDCLASSLib::GetLiquidClassAspirateParameter(MLSTAR_LIQUIDCLASSLib::LIQUIDCLASS_PARAMS_ASP::SwapSpeed);
    FDispAirTranspo = MLSTAR_LIQUIDCLASSLib::GetLiquidClassDispenseParameter(MLSTAR_LIQUIDCLASSLib::LIQUIDCLASS_PARAMS_DISP::AirTransportVolume);
    FDispBlowOut = MLSTAR_LIQUIDCLASSLib::GetLiquidClassDispenseParameter(MLSTAR_LIQUIDCLASSLib::LIQUIDCLASS_PARAMS_DISP::BlowOutVolume);
    FDispFlowRate = MLSTAR_LIQUIDCLASSLib::GetLiquidClassDispenseParameter(MLSTAR_LIQUIDCLASSLib::LIQUIDCLASS_PARAMS_DISP::FlowRate);
    FDispmixFlowRate = MLSTAR_LIQUIDCLASSLib::GetLiquidClassDispenseParameter(MLSTAR_LIQUIDCLASSLib::LIQUIDCLASS_PARAMS_DISP::MixFlowRate);
    FDispSettlingTime = MLSTAR_LIQUIDCLASSLib::GetLiquidClassDispenseParameter(MLSTAR_LIQUIDCLASSLib::LIQUIDCLASS_PARAMS_DISP::SettlingTime);
    FDispStopbackVolume = MLSTAR_LIQUIDCLASSLib::GetLiquidClassDispenseParameter(MLSTAR_LIQUIDCLASSLib::LIQUIDCLASS_PARAMS_DISP::StopBackVolume);
    FDispStopFlowRate = MLSTAR_LIQUIDCLASSLib::GetLiquidClassDispenseParameter(MLSTAR_LIQUIDCLASSLib::LIQUIDCLASS_PARAMS_DISP::StopFlowRate);
    FDispSwapSpeed = MLSTAR_LIQUIDCLASSLib::GetLiquidClassDispenseParameter(MLSTAR_LIQUIDCLASSLib::LIQUIDCLASS_PARAMS_DISP::SwapSpeed);
    FAspFlowRate = xTenTurnToString(FAspFlowRate, 4);
    FAspSwapSpeed = xTenTurnToString(FAspSwapSpeed, 4);
    FAspBlowOut = xTenTurnToString(FAspBlowOut, 4);
    FDispBlowOut = xTenTurnToString(FDispBlowOut, 4);
    FDispSwapSpeed = xTenTurnToString(FDispSwapSpeed, 4);
    FAspAirTransport = xTenTurnToString(FAspAirTransport, 3);
    FDispAirTranspo = xTenTurnToString(FDispAirTranspo, 3);
    FAspMixFlow = xTenTurnToString(FAspMixFlow, 4);
    FDispmixFlowRate = xTenTurnToString(FDispmixFlowRate, 4);
    FAspSettlingTime = xTenTurnToString(FAspSettlingTime, 2);
    FDispSettlingTime = xTenTurnToString(FDispSettlingTime, 2);
    FAspOverAsp = xTenTurnToString(FAspOverAsp, 3);
    FDispFlowRate = xTenTurnToString(FDispFlowRate, 4);
    FDispStopbackVolume = xTenTurnToString(FDispStopbackVolume, 3);
    FDispStopFlowRate = xTenTurnToString(FDispStopFlowRate, 4);
    if(0){
      _at = Translate("at0&");
    }
    _at = Translate("at2&");
    varType = StrGetType(_po);
    if (varType != "s")
    {
      _po = xTenTurnToString(_po, 4);
      _po = StrConcat4(Translate("po"), _po, Translate("&"), Translate(""));
    }
    varType = StrGetType(_ip);
    if (varType == "s")
    {
      _ip = Translate("ip0000&");
    }
    else
    {
      _ip = xTenTurnToString(_ip, 4);
      _ip = StrConcat4(Translate("ip"), _ip, Translate("&"), Translate(""));
    }
    varType = StrGetType(_fp);
    if (varType == "s")
    {
      tmp_fp = Translate("");
    }
    else
    {
      tmp_fp = xTenTurnToString(_fp, 4);
    }
    varType = StrGetType(_av);
    if (varType == "s")
    {
      tmp_av = Translate("");
    }
    else
    {
      if(0){
        tmp_av = xTenTurnToString(_av, 6);
      }
      tmp_av = xTenTurnToString_2decimals(_av, 6);
    }
    varType = StrGetType(_dv);
    if (varType == "s")
    {
      tmp_dv = Translate("");
    }
    else
    {
      if(0){
        tmp_dv = xTenTurnToString(_dv, 6);
      }
      tmp_dv = xTenTurnToString_2decimals(_dv, 6);
    }
    varType = StrGetType(_ba);
    if (varType == "s")
    {
      _ba = StrConcat4(Translate("ba"), FAspBlowOut, Translate("&"), Translate(""));
    }
    else
    {
      _ba = xTenTurnToString_2decimals(_ba, 6);
      if(0){
        _ba = xTenTurnToString(_ba, 4);
      }
      _ba = StrConcat4(Translate("ba"), _ba, Translate("&"), Translate(""));
    }
    varType = StrGetType(_oa);
    if (varType != "s")
    {
      _oa = xTenTurnToString(_oa, 3);
      _oa = StrConcat4(Translate("oa"), _oa, Translate("&"), Translate(""));
    }
    varType = StrGetType(_lm);
    if (varType != "s")
    {
      _lm = StrConcat4(Translate("lm"), _lm, Translate("&"), Translate(""));
    }
    else
    {
      _lm = StrConcat4(Translate("lm"), Translate("1"), Translate("&"), Translate(""));
    }
    varType = StrGetType(_ll);
    if (varType != "s")
    {
      _ll = StrConcat4(Translate("ll"), _ll, Translate("&"), Translate(""));
    }
    else
    {
      _ll = StrConcat4(Translate("ll"), Translate("1"), Translate("&"), Translate(""));
    }
    varType = StrGetType(_mv);
    if (varType != "s")
    {
      _mv = xTenTurnToString(_mv, 5);
      _mv = StrConcat4(Translate("mv"), _mv, Translate("&"), Translate(""));
    }
    else
    {
      _mv = Translate("mv00000&");
    }
    varType = StrGetType(_mc);
    if (varType != "s")
    {
      _mc = xTenTurnToString_NoDecimals(_mc, 2);
      _mc = StrConcat4(Translate("mc"), _mc, Translate("&"), Translate(""));
    }
    else
    {
      _mc = Translate("mc00&");
    }
    varType = StrGetType(_mp);
    if (varType != "s")
    {
      _mp = xTenTurnToString(_mp, 3);
      _mp = StrConcat4(Translate("mp"), _mp, Translate("&"), Translate(""));
    }
    else
    {
      _mp = Translate("mp000&");
    }
    varType = StrGetType(_zu);
    if (varType == "s")
    {
      tmp_zu = Translate("");
    }
    else
    {
      tmp_zu = xTenTurnToString(_zu, 4);
    }
    varType = StrGetType(_zr);
    if (varType == "s")
    {
      tmp_zr = Translate("");
    }
    else
    {
      tmp_zr = xTenTurnToString(_zr, 4);
    }
    varType = StrGetType(_mh);
    if (varType == "s")
    {
      _mh = Translate("mh0000&");
    }
    else
    {
      _mh = xTenTurnToString(_mh, 4);
      _mh = StrConcat4(Translate("mh"), _mh, Translate("&"), Translate(""));
    }
    varType = StrGetType(_gj);
    if (varType != "s")
    {
      _gj = StrConcat2(Translate("gj"), _gj);
    }
    varType = StrGetType(_gi);
    if (varType != "s")
    {
      _gi = xTenTurnToString_NoDecimals(_gi, 3);
      _gi = Translate("gi") + _gi;
    }
    varType = StrGetType(_gk);
    if (varType != "s")
    {
      _gk = StrConcat2(Translate("gk"), _gk);
    }
    _as = StrConcat4(Translate("as"), FAspFlowRate, Translate("&"), Translate(""));
    _de = StrConcat4(Translate("de"), FAspSwapSpeed, Translate("&"), Translate(""));
    _ta = StrConcat4(Translate("ta"), FAspAirTransport, Translate("&"), Translate(""));
    _ms = StrConcat4(Translate("ms"), FAspMixFlow, Translate("&"), Translate(""));
    _wt = StrConcat4(Translate("wt"), FAspSettlingTime, Translate("&"), Translate(""));
    numberOfChannels = StrGetLength(_tm);
    param_positionIDs = Translate("");
    param_tm = Translate("");
    param_xp = Translate("");
    param_yp = Translate("");
    param_lp = Translate("");
    param_zl_Asp = Translate("");
    param_zl_Disp = Translate("");
    param_zx = Translate("");
    param_fp = Translate("");
    param_av = Translate("");
    param_dv = Translate("");
    param_zu = Translate("");
    param_zr = Translate("");
    {
      for(loopCounter_SMT_Channels = 0; loopCounter_SMT_Channels < numberOfChannels;)
      {
        loopCounter_SMT_Channels = loopCounter_SMT_Channels + 1;
        chr_index = loopCounter_SMT_Channels - 1;
        chn = StrMid(_tm, chr_index, 1);
        addNullValues = 0;
        if (chn == "1")
        {
          pos = _sequenceAspDisp.GetCurrentPosition();
          if (pos > 0)
          {
            labwareID = SeqGetLabwareId(_sequenceAspDisp);
            positionID = SeqGetPositionId(_sequenceAspDisp);
            SeqIncrement(_sequenceAspDisp, 1);
            DevGetLabwarePositionEx(System, labwareID, positionID, x, y, z, dummy);
            Trace ("*************  x: ", x);
            Trace ("*************  y: ", y);
            Trace ("*************  z: ", z);
            xp = xTenTurnToString(x, 5);
            yp = xTenTurnToString(y, 4);
            zl_Asp = _FixedHeightDuringAsp + z;
            zl_Disp = _fixedHeightDuringDispense + z;
            zl_Asp = xTenTurnToString(zl_Asp, 4);
            zl_Disp = xTenTurnToString(zl_Disp, 4);
            lp = _LLDSearchHeight + z;
            lp = xTenTurnToString(lp, 4);
            zx = xTenTurnToString(z, 4);
            fp = tmp_fp;
            av = tmp_av;
            dv = tmp_dv;
            zu = tmp_zu;
            zr = tmp_zr;
            tm = Translate("1");
          }
          else
          {
            addNullValues = 1;
          }
        }
        else
        {
          addNullValues = 1;
        }
        if (addNullValues == 1)
        {
          xp = Translate("00000");
          yp = Translate("0000");
          zx = Translate("0000");
          lp = Translate("2450");
          zl_Asp = Translate("2450");
          zl_Disp = Translate("2450");
          fp = Translate("0000");
          av = Translate("00000");
          dv = Translate("00000");
          zu = Translate("0000");
          zr = Translate("00000");
          tm = Translate("0");
          positionID = Translate("");
        }
        if (loopCounter_SMT_Channels > 1)
        {
          spacer = Translate(" ");
        }
        else
        {
          spacer = Translate("");
        }
        param_positionIDs = StrConcat4(param_positionIDs, spacer, positionID, Translate(""));
        param_tm = StrConcat4(param_tm, spacer, tm, Translate(""));
        param_xp = StrConcat4(param_xp, spacer, xp, Translate(""));
        param_yp = StrConcat4(param_yp, spacer, yp, Translate(""));
        param_lp = StrConcat4(param_lp, spacer, lp, Translate(""));
        param_zl_Asp = StrConcat4(param_zl_Asp, spacer, zl_Asp, Translate(""));
        param_zl_Disp = StrConcat4(param_zl_Disp, spacer, zl_Disp, Translate(""));
        param_zx = StrConcat4(param_zx, spacer, zx, Translate(""));
        param_fp = StrConcat4(param_fp, spacer, fp, Translate(""));
        param_av = StrConcat4(param_av, spacer, av, Translate(""));
        param_dv = StrConcat4(param_dv, spacer, dv, Translate(""));
        param_zu = StrConcat4(param_zu, spacer, zu, Translate(""));
        param_zr = StrConcat4(param_zr, spacer, zr, Translate(""));
      }
    }
    Trace(".......");
    Trace("ASP/DISP FROM ----  Labware ID for Asp / Disp= ", labwareID, " // ", param_positionIDs);
    Trace("Channels=", _tm);
    Trace(".......");
    _tm = StrConcat2(Translate("tm"), param_tm);
    _xp = StrConcat2(Translate("xp"), param_xp);
    _yp = StrConcat2(Translate("yp"), param_yp);
    _lp = StrConcat2(Translate("lp"), param_lp);
    _zl_Asp = StrConcat2(Translate("zl"), param_zl_Asp);
    _zl_Disp = StrConcat2(Translate("zl"), param_zl_Disp);
    _zx = StrConcat2(Translate("zx"), param_zx);
    if (tmp_fp != "")
    {
      _fp = StrConcat2(Translate("fp"), param_fp);
    }
    if (tmp_av != "")
    {
      _av = StrConcat2(Translate("av"), param_av);
    }
    if (tmp_dv != "")
    {
      _dv = StrConcat2(Translate("dv"), param_dv);
    }
    if (tmp_zu != "")
    {
      _zu = StrConcat2(Translate("zu"), param_zu);
    }
    if (tmp_zr != "")
    {
      _zr = StrConcat2(Translate("zr"), param_zr);
    }
    h_Asp = _FixedHeightDuringAsp + z;
    h_Asp = xTenTurnToString(h_Asp, 4);
    if (_GotoTraverseBeforeAsp == 1)
    {
      _th = Translate("th2450");
    }
    else
    {
      _th = StrConcat4(Translate("th"), h_Asp, Translate(""), Translate(""));
    }
    if (_GotoTraverseAfterAsp == 1)
    {
      _te = Translate("te2450");
    }
    else
    {
      if(0){
        _te = Translate("te1911");
      }
      _te = StrConcat4(Translate("te"), h_Asp, Translate(""), Translate(""));
      Trace ("*************  _te: ", _te);
      Trace ("*************  h_Asp: ", h_Asp);
    }
    arrAspFWcmd.SetSize(0);
    arrAspFWcmd.AddAsLast(_at);
    arrAspFWcmd.AddAsLast(_tm);
    arrAspFWcmd.AddAsLast(_xp);
    arrAspFWcmd.AddAsLast(_yp);
    arrAspFWcmd.AddAsLast(_th);
    arrAspFWcmd.AddAsLast(_te);
    arrAspFWcmd.AddAsLast(_lp);
    arrAspFWcmd.AddAsLast(_zl_Asp);
    arrAspFWcmd.AddAsLast(_zx);
    arrAspFWcmd.AddAsLast(_ip);
    arrAspFWcmd.AddAsLast(_fp);
    arrAspFWcmd.AddAsLast(_av);
    arrAspFWcmd.AddAsLast(_as);
    arrAspFWcmd.AddAsLast(_ta);
    arrAspFWcmd.AddAsLast(_ba);
    arrAspFWcmd.AddAsLast(_oa);
    arrAspFWcmd.AddAsLast(_lm);
    arrAspFWcmd.AddAsLast(_ll);
    arrAspFWcmd.AddAsLast(_de);
    arrAspFWcmd.AddAsLast(_wt);
    arrAspFWcmd.AddAsLast(_mv);
    arrAspFWcmd.AddAsLast(_mc);
    arrAspFWcmd.AddAsLast(_mp);
    arrAspFWcmd.AddAsLast(_ms);
    arrAspFWcmd.AddAsLast(_gj);
    arrAspFWcmd.AddAsLast(_gi);
    arrAspFWcmd.AddAsLast(_gk);
    arrAspFWcmd.AddAsLast(_zu);
    arrAspFWcmd.AddAsLast(_zr);
    arrAspFWcmd.AddAsLast(_mh);
    arrAspFWcmd.AddAsLast(_po);
    _dm = Translate("dm3&");
    h_Disp = _fixedHeightDuringDispense + z;
    h_Disp = xTenTurnToString(h_Disp, 4);
    if (_GotoTraverseHeightBeforeDisp == 1)
    {
      _th = Translate("th2450");
    }
    else
    {
      _th = StrConcat4(Translate("th"), h_Disp, Translate(""), Translate(""));
    }
    if (_GotoTraverseHeightAfterDisp == 1)
    {
      _te = Translate("te2450");
    }
    else
    {
      if(0){
        _te = Translate("te1911");
      }
      _te = StrConcat4(Translate("te"), h_Disp, Translate(""), Translate(""));
    }
    _ds = StrConcat4(Translate("ds"), FDispFlowRate, Translate("&"), Translate(""));
    _ds = StrConcat4(Translate("ds"), FDispFlowRate, Translate("&"), Translate(""));
    _ss = StrConcat4(Translate("ss"), FDispStopFlowRate, Translate("&"), Translate(""));
    _rv = Translate("rv") + FDispStopbackVolume;
    _rv = StrConcat4(Translate("rv"), FDispStopbackVolume, Translate("&"), Translate(""));
    _ta = StrConcat4(Translate("ta"), FDispAirTranspo, Translate("&"), Translate(""));
    varType = StrGetType(_bvDispense);
    if (varType == "s")
    {
      _bvDispense = StrConcat4(Translate("ba"), FDispBlowOut, Translate("&"), Translate(""));
    }
    else
    {
      _bvDispense = xTenTurnToString_2decimals(_bvDispense, 6);
      if(0){
        _bvDispense = xTenTurnToString(_bvDispense, 4);
      }
      _bvDispense = StrConcat4(Translate("ba"), _bvDispense, Translate("&"), Translate(""));
    }
    _de = StrConcat4(Translate("de"), FDispSwapSpeed, Translate("&"), Translate(""));
    _wt = StrConcat4(Translate("wt"), FDispSettlingTime, Translate("&"), Translate(""));
    arrDispFWcmd.SetSize(0);
    arrDispFWcmd.AddAsLast(_dm);
    arrDispFWcmd.AddAsLast(_tm);
    arrDispFWcmd.AddAsLast(_xp);
    arrDispFWcmd.AddAsLast(_yp);
    arrDispFWcmd.AddAsLast(_th);
    arrDispFWcmd.AddAsLast(_te);
    arrDispFWcmd.AddAsLast(_lp);
    arrDispFWcmd.AddAsLast(_zl_Disp);
    arrDispFWcmd.AddAsLast(_zx);
    arrDispFWcmd.AddAsLast(_ip);
    arrDispFWcmd.AddAsLast(_fp);
    arrDispFWcmd.AddAsLast(_dv);
    arrDispFWcmd.AddAsLast(_ds);
    arrDispFWcmd.AddAsLast(_ta);
    arrDispFWcmd.AddAsLast(_bvDispense);
    arrDispFWcmd.AddAsLast(_lm);
    arrDispFWcmd.AddAsLast(_ll);
    arrDispFWcmd.AddAsLast(_de);
    arrDispFWcmd.AddAsLast(_wt);
    arrDispFWcmd.AddAsLast(_zu);
    arrDispFWcmd.AddAsLast(_zr);
    arrDispFWcmd.AddAsLast(_mh);
    arrDispFWcmd.AddAsLast(_po);
    arrDispFWcmd.AddAsLast(_ss);
    arrDispFWcmd.AddAsLast(_rv);
    arrDispFWcmd.AddAsLast(_mv);
    arrDispFWcmd.AddAsLast(_mc);
    arrDispFWcmd.AddAsLast(_mp);
    arrDispFWcmd.AddAsLast(_ms);
    sAspCommand = arrAspFWcmd.ElementAt( 1 -1);
    sDispCommand = Translate("");
    arrAspFwCmd_Size=arrAspFWcmd.GetSize();
    arrAspFwCmd_Size = arrAspFwCmd_Size - 1;
    {
      for(loopCounter4 = 0; loopCounter4 < arrAspFwCmd_Size;)
      {
        loopCounter4 = loopCounter4 + 1;
        LC = loopCounter4 + 1;
        TrcTrace4(Translate("loopCounter="), LC, Translate("        param="), arrAspFWcmd.ElementAt( LC -1));
        str = arrAspFWcmd.ElementAt( LC -1);
        varType = StrGetType(str);
        if (varType == "s")
        {
          if (str != "")
          {
            sAspCommand = StrConcat2(sAspCommand, str);
          }
        }
        else
        {
          sAspCommand = StrConcat2(sAspCommand, str);
        }
      }
    }
    sAspCommand = StrConcat2(sAspCommand, str);
    arrDispFwCmd_Size=arrDispFWcmd.GetSize();
    {
      for(loopCounter7 = 0; loopCounter7 < arrDispFwCmd_Size;)
      {
        loopCounter7 = loopCounter7 + 1;
        TrcTrace4(Translate("loopCounter="), loopCounter7, Translate("        param="), arrDispFWcmd.ElementAt( loopCounter7 -1));
        str = arrDispFWcmd.ElementAt( loopCounter7 -1);
        varType = StrGetType(str);
        if (varType == "s")
        {
          if (str != "")
          {
            sDispCommand = StrConcat2(sDispCommand, str);
          }
        }
        else
        {
          sDispCommand = StrConcat2(sDispCommand, str);
        }
      }
    }
    TrcTrace(Translate("Aspirate FW command -- "), sAspCommand);
    TrcTrace(Translate("Dispense FW command -- "), sDispCommand);
    if (_Aspirate == 1)
    {
      MECC::TraceComment(Translate("-----------------------------------DISPENSE DRIVE POSITION BEFORE ASPIRATE"));
      {
        	variable arrRetValues[];
        	arrRetValues = System._1FB5DA01_3ACB_11d4_AE1F_0004ACB1DCB2("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"); // FirmwareCommand
        	sFWCommandReturn = arrRetValues[3];
      }
      Trace("Channels Z position BEFORE Aspiration: " , sFWCommandReturn);
      strFWCommand = StrConcat2(Aspirate, sAspCommand);
      Trace("Aspiration fw command sent: " , strFWCommand);
      System._1FB5DA01_3ACB_11d4_AE1F_0004ACB1DCB2("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"); // FirmwareCommand
      if( 0 == timer2.SetTimer(_sleepBetweenPlungerMove) )
      {
            MECC::RaiseRuntimeErrorEx(-1355939584, MECC::IDS::stepNameTimerStart, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
      }
      MECC::TraceComment(Translate("-----------------------------------DISPENSE DRIVE POSITION AFTER ASPIRATE"));
      {
        	variable arrRetValues[];
        	arrRetValues = System._1FB5DA01_3ACB_11d4_AE1F_0004ACB1DCB2("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"); // FirmwareCommand
        	sFWCommandReturn = arrRetValues[3];
      }
      Trace("Channels Z position AFTER Aspiration: " , sFWCommandReturn);
      if( 0 == timer2.WaitTimer(hslTrue, hslTrue) )
      {
            MECC::RaiseRuntimeErrorEx(-1339162368, MECC::IDS::stepNameTimerWait, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
      }
    }
    if (_Dispense == 1)
    {
      MECC::TraceComment(Translate("-----------------------------------DISPENSE DRIVE POSITION BEFORE DISPENSE"));
      {
        	variable arrRetValues[];
        	arrRetValues = System._1FB5DA01_3ACB_11d4_AE1F_0004ACB1DCB2("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"); // FirmwareCommand
        	sFWCommandReturn = arrRetValues[3];
      }
      Trace("Channels Z position BEFORE Dispense: " , sFWCommandReturn);
      strFWCommand = StrConcat2(Dispense, sDispCommand);
      Trace("Dispense fw command sent: " , strFWCommand);
      System._1FB5DA01_3ACB_11d4_AE1F_0004ACB1DCB2("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"); // FirmwareCommand
      if( 0 == timer2.SetTimer(_sleepDispense) )
      {
            MECC::RaiseRuntimeErrorEx(-1355939584, MECC::IDS::stepNameTimerStart, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
      }
      MECC::TraceComment(Translate("-----------------------------------DISPENSE DRIVE POSITION AFTER DISPENSE"));
      {
        	variable arrRetValues[];
        	arrRetValues = System._1FB5DA01_3ACB_11d4_AE1F_0004ACB1DCB2("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"); // FirmwareCommand
        	sFWCommandReturn = arrRetValues[3];
      }
      Trace("Channels Z position AFTER Dispense: " , sFWCommandReturn);
      if( 0 == timer2.WaitTimer(hslTrue, hslTrue) )
      {
            MECC::RaiseRuntimeErrorEx(-1339162368, MECC::IDS::stepNameTimerWait, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
      }
    }
  }
} // library namespace
